PsychoPy2experiment version="2024.1.5"
Settings
  Completed URL = $"https://hujipsych.au1.qualtrics.com/jfe/form/SV_9vNlj3F6NhXG2QS?participant=" +expInfo['participant']+'&id='+expInfo['id']
  Experiment info = {'participant': '', 'id': ''}
  Full-screen window = True
  Incomplete URL = $"https://hujipsych.au1.qualtrics.com/jfe/form/SV_6YeeZkt5hM08j9Y?participant=" +expInfo['participant']+'&id='+expInfo['id']
  Monitor = testMonitor
  Resources = ['subject_breakdown.csv', 'transport_rules/Slide1.jpeg', 'instr_new_draft/Slide1.jpeg', 'instr_new_draft/Slide2.jpeg', 'instr_new_draft/Slide3.jpeg', 'instr_new_draft/Slide4.jpeg', 'instr_new_draft/Slide5.jpeg', 'instr_new_draft/Slide6.jpeg', 'instr_new_draft/Slide7.jpeg', 'instr_new_draft/Slide8.jpeg', 'instr_new_draft/Slide9.jpeg', 'instr_new_draft/Slide10.jpeg', 'instr_new_draft/Slide11.jpeg', 'instr_new_draft/Slide12.jpeg', 'instr_new_draft/Slide13.jpeg', 'instr_new_draft/Slide14.jpeg', 'instr_new_draft/Slide15.jpeg', 'instr_new_draft/Slide16.jpeg', 'instr_new_draft/Slide17.jpeg', 'instr_new_draft/Slide18.jpeg', 'instr_new_draft/Slide19.jpeg', 'instr_new_draft/Slide20.jpeg', 'instr_new_draft/Slide21.jpeg', 'instr_new_draft/Slide22.jpeg', 'instr_new_draft/Slide23.jpeg', 'instr_new_draft/Slide24.jpeg', 'instr_new_draft/Slide25.jpeg', 'instr_new_draft/Slide26.jpeg', 'instr_new_draft/Slide27.jpeg', 'instr_new_draft/Slide28.jpeg', 'instr_new_draft/Slide29.jpeg', 'instr_new_draft/Slide30.jpeg', 'instr_new_draft/Slide31.jpeg', 'instr_new_draft/Slide32.jpeg', 'instr_new_draft/Slide33.jpeg', 'instr_new_draft/Slide34.jpeg', 'instr_new_draft/Slide35.jpeg', 'instr_new_draft/Slide36.jpeg', 'instr_new_draft/Slide37.jpeg', 'instr_new_draft/Slide38.jpeg', 'instr_new_draft/Slide39.jpeg', 'instr_new_draft/Slide40.jpeg', 'instr_new_draft/Slide41.jpeg', 'instr_new_draft/Slide42.jpeg', 'instr_new_draft/Slide43.jpeg', 'instr_new_draft/Slide44.jpeg', 'instr_new_draft/Slide45.jpeg', 'instr_new_draft/Slide46.jpeg', 'instr_new_draft/Slide47.jpeg', 'instr_new_draft/Slide48.jpeg', 'instr_new_draft/Slide49.jpeg', 'instr_new_draft/Slide50.jpeg', 'instr_new_draft/Slide51.jpeg', 'instr_new_draft/Slide52.jpeg', 'instr_new_draft/Slide53.jpeg', 'instr_new_draft/Slide54.jpeg', 'instr_new_draft/Slide55.jpeg', 'instr_new_draft/Slide56.jpeg', 'instr_new_draft/Slide57.jpeg', 'instr_new_draft/Slide58.jpeg', 'instr_new_draft/Slide59.jpeg', 'opt_inr.jpg', 'practice_one_ticket.jpg', 'tic.jpg', 'attempt_bo.jpg', 'risk_distributions_final/Slide1.jpeg', 'risk_distributions_final/Slide15.jpeg', 'risk_distributions_final/Slide14.jpeg', 'risk_distributions_final/Slide13.jpeg', 'risk_distributions_final/Slide12.jpeg', 'risk_distributions_final/Slide11.jpeg', 'risk_distributions_final/Slide10.jpeg', 'risk_distributions_final/Slide9.jpeg', 'risk_distributions_final/Slide8.jpeg', 'risk_distributions_final/Slide7.jpeg', 'risk_distributions_final/Slide6.jpeg', 'risk_distributions_final/Slide5.jpeg', 'risk_distributions_final/Slide4.jpeg', 'risk_distributions_final/Slide3.jpeg', 'risk_distributions_final/Slide2.jpeg', 'gamble.png', 'distinguiish_actions/Slide1.jpeg', 'distinguiish_actions/Slide3.jpeg', 'distinguiish_actions/Slide2.jpeg', 'transport_rules/Slide1.jpeg', 'planes/new_platform.png', 'planes/walking.png', 'Slide1.jpeg', 'islands/desert.png', 'islands/hut.png', 'planes/train.png', 'planes/down_arrow.png', 'planes/full_down_arrow.png', 'planes/left_diag.png', 'planes/plane.png', 'planes/pointer.png', 'planes/right_arrow.png', 'planes/right_diag.png', 'islands/mountain.png', 'islands/town.png', 'islands/win.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = action_training_combine_other_part_next
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine action_prep
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        set_actions=1
      Begin Routine:
        warning.alignHoriz="left"
        if set_actions==1:
            text='You will now try and catch your moving ride by pressing space when it is exactly in the center across the screen.\n\n Press space to continue'

        elif set_actions==2:
            if platform_examples.thisN==0:
                text='Now we will try jumping from a WIDE platform.\n\n Your goal is to press space when the vehicle is exactly in the middle of the screen\n\nPress space to continue'
            elif platform_examples.thisN==3:
                text='Now we will try jumping from a MEDIUM platform.\n\n Your goal is to press space when the vehicle is exactly in the middle of the screen\n\nPress space to continue'
            elif platform_examples.thisN==6:
                text='Now we will try jumping from a NARROW (hard) platform.\n\n Your goal is to press space when the vehicle is exactly in the middle of the screen\n\nPress space to continue'


        elif set_actions==3:
            if additional_section.thisN<2:
                if ext_platform.thisN==0 and additional_section.thisN==0:
                    text='Let us see an example where the PLATFORM is NARROW, but the LOADING AREA is LONG!'

                else:
                    text='Press space to jump from the additional section'
            else:
                if ext_platform.thisN==0 and additional_section.thisN==2:
                    text='Let us see an example where the PLATFORM is SHORT, and the LOADING AREA is SHORT'
                else:
                    text='Press space to jump from the LOADING AREA'
    TextComponent warning
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $text
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    KeyboardComponent ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent object_type
      Code Type = Both
      Begin JS Routine:
        nm = randint(0, 2);
        plane_selected = transport[nm];
        if ((plane_selected === plane)) {
            selected_object = "plane";
        } else {
            if ((plane_selected === train)) {
                selected_object = "train";
            }
        }
        success_on = [];
      Begin Routine:
        import random as rand
        import numpy as np
        nm=rand.randint(0,2)

        plane_selected=transport[nm]

        if plane_selected==plane:
            selected_object='plane'
        elif plane_selected==train:
            selected_object='train'

        success_on=[]
  Routine action_execution
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    CodeComponent moving_3
      Code Type = Both
      Begin Experiment:
        yScale=.45
        minSize = .1
        maxSize = .1
        pathStart=[-1,-.95]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45

        posClock = core.Clock()
        sizeClock = core.Clock()

        #myPaths = data.TrialHandler(
        #nReps=1,
        #method='sequential',
        #extraInfo=expInfo,
        #originPath=-1,
        #trialList=data.importConditions('Book1paths.xlsx'),
        #seed=None,
        #name='myPaths')
        current_pos=[1]
      Begin JS Experiment:
        yScale = 0.45;
        minSize = 0.1;
        maxSize = 0.1;
        pathStart = [(- 1), (- 0.95)];
        pathN = 0;
        xScale = ((psychoJS.window.size[0] / psychoJS.window.size[1]) * 0.45);
        posClock = new util.Clock();
        sizeClock = new util.Clock();
        current_pos = [1];
      Begin JS Routine:
        yScale = 0.45;
        minSize = 0.1;
        maxSize = 0.1;
        pathStart = [(- 1), (- 0.9)];
        pathN = 0;
        xScale = ((psychoJS.window.size[0] / psychoJS.window.size[1]) * 0.45);
        posClock = new util.Clock();
        sizeClock = new util.Clock();
        cueSize = minSize;
        cuePos = pathStart;
        posClock.reset();
        sizeClock.reset();
        pathTime = 1;
      Begin Routine:
        yScale=.45
        minSize = .1
        maxSize = .1
        cuePulse = 3
        pathStart=[-1,-.9]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45

        posClock = core.Clock()
        sizeClock = core.Clock()

        #myPaths = data.TrialHandler(
        #nReps=1,
        #method='sequential',
        #extraInfo=expInfo,
        #originPath=-1,
        #trialList=data.importConditions('Book1paths.xlsx'),
        #seed=None,
        #name='myPaths')



        #thisPath = myPaths.next()
        cueSize = minSize
        cuePos = pathStart
        posClock.reset()
        sizeClock.reset()
      Each Frame:
        #pathN = myPaths.thisN
        if action.keys == 'space':
            current_pos=cuePos
           # continueRoutine = False;

        pathTime=1
        pathEnd=[1,-.95]
        #if posClock.getTime() > pathTime:
        #if posClock.getTime() > thisPath["pathTime"]:
           # if pathN < len(myPaths.trialList) - 1:
              #  pathStart = [float(thisPath["pathEnd"][0]),float(thisPath["pathEnd"][1])]
            #   pathStart = [float(pathEnd[0]),float(pathEnd[1])]
             #  thisPath = myPaths.nextthis()
              # posClock.reset()
            #else:
             #   continueRoutine = False;
        #cuePos = (xScale*(pathStart[0]+(float(thisPath['pathEnd'][0])-pathStart[0])*posClock.getTime()/float(thisPath['pathTime'])), yScale*(pathStart[1]+(float(thisPath['pathEnd'][1])-pathStart[1])*posClock.getTime()/float(thisPath['pathTime'])))
        cuePos = (xScale*(pathStart[0]+(float(pathEnd[0])-pathStart[0])*posClock.getTime()/float(pathTime)), yScale*(pathStart[1]+(float(pathEnd[1])-pathStart[1])*posClock.getTime()/float(pathEnd[1])))
      Each JS Frame:
        if ((action.keys === "space")) {
            current_pos = cuePos;
            //continueRoutine = false;
        }

        pathEnd = [1, (- 0.95)];
        cuePos = [(xScale * (pathStart[0] + (((Number.parseFloat(pathEnd[0]) - pathStart[0]) * posClock.getTime()) / Number.parseFloat(pathTime)))), (yScale * (pathStart[1] + (((Number.parseFloat(pathEnd[1]) - pathStart[1]) * posClock.getTime()) / Number.parseFloat(pathEnd[1]))))];
    ImageComponent moving_cue_9
      color = -1.0000, -1.0000, -1.0000
      image [set every repeat] = planes/train.png
      pos [set every frame] = cuePos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    KeyboardComponent action
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      storeCorrect = True
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    CodeComponent end_after_one
      Code Type = Both
      Each Frame:
        if t>path_time+.1:

            if len(action.keys) == 0:
                current_pos=[10,10]

            continueRoutine=False;
      Each JS Frame:
        if ((t > (1 + 0.1))) {
            if ((action.keys === undefined)) {
                current_pos = [10, 10];
            }
            continueRoutine = false;
        }
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  Routine feedback
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    CodeComponent set_difficulty
      Code Type = Auto->JS
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      Begin Routine:
        if set_actions==2:
            if platform_examples.thisN<2:
                allowed_area=.3;
                w_self=.95
                judge = "LENIENT officer ";
            elif platform_examples.thisN<4:
                allowed_area=.1;
                w_self=.6
                judge = "medium officer ";
            elif  platform_examples.thisN<6:
                w_self=.1
                allowed_area=.01;
                judge = "hard officer ";

            text_3.alignHoriz="left"

        else:
            if additional_section.thisN+1 % 2==0 :
                w_self=.1
    CodeComponent give_feedback
      Code Type = Both
      Begin Experiment:
        hard=False
        gor=0
      Begin JS Experiment:
        hard = false;
        gor = 0;
      Begin JS Routine:
        if ((performance_arr.length >1)) {
            percent_acc = ecdfArray(performance_arr);
            per = percent_acc(Math.abs((0.3 - action.rt)));
        }



        if ((Math.abs(Math.abs((0.3 - action.rt))) < allowed_area)) {
            success = 1;
        } else {
            success = 0;
        }

        if ((plane_selected === plane)) {
            transp = "plane";
        } else {
            transp = "train";
        }
        if ((success === 1)) {
            got = ("Success! you were timely enough to catch the " + transp.toString());
        } else {
            got = ("Sorry. You were NOT timely enough to catch the " + transp.toString());
        }
        if ((action.keys === undefined)) {
            action.keys = [];
            action.rt = [];
        } else {
            performance_arr.push(Math.abs(.3-action.rt));
        }
      Begin Routine:
        #get_times[trials.thisN]=current_pos[0]
        if hard==False:
            allowed_area=.085
            w_self=.75
            judge='lenient officer '
        else:
            allowed_area=.02
            w_self=.3
            judge='strict officer '



        if abs(abs(.3-action.rt))<allowed_area:
            #did they get it right at least once
            success=1
        else:
            success=0


        if plane_selected==plane:
            transp="plane"
        else:
            transp="train"


        if success==1:
            got='Success! You succesfully caught the '+ str(transp)
        else:
            got='Sorry.  You were NOT timely enough to catch the '+ str(transp)


        performance_arr.append(abs(.3-action.rt))
      End Routine:
        if easy.finished==True:
            if hard.finished==True:
                trials_actions.finished=True
                trials_hard_officer.finished=True
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $got
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_cdf
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("position", abs(.3-action.rt))
        thisExp.addData("cdf", per)
    TextComponent text_26
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.75)
      startVal [time (s)] = 1
      text = Press space to continue
      units = norm
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  Routine open_questions
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        text_to='Do you have any questions or feedback about any parts of the game?\n\n Response must be a minimum of two sentences.'
        document.body.style.cursor='auto';
    TextboxComponent textbox
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Enter text here
    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = Click on this text to move on (you might need to press slightly below) 
      units = norm
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    MouseComponent mouse
      clickable = text_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_to
      units = norm
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    CodeComponent force_write
      Code Type = Both
      Begin JS Routine:
        if ((trials_review.thisN === 0)) {
            time_to_show = 0;
        } else {
            if ((trials_review.thisN > 0)) {
                time_to_show = 100000;
            }
        }
        please_write_more.alignHoriz = "left";
      Begin Routine:
        if trials_review.thisN==0:
            time_to_show=0
        elif trials_review.thisN>0:
            time_to_show=100000
        please_write_more.alignHoriz="left"
      End JS Routine:
        if ((textbox.text.length > 30)) {
            trials_review.finished = true;
        }
        let practice_end = new Date().toLocaleTimeString();
        psychoJS.experiment.addData("instructions_ended", practice_end);
      End Routine:
        if len(textbox.text)>30:
            trials_review.finished=True
    TextComponent please_write_more
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (0, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_show
      units = norm
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      text:
        Your response was not long enough. Please provide us with more detailed feedback in the textbox.
        Specifically,

        1) Which part of the instructions did you find most confusing?
        2) Do you still remmember which transport takes you where or do you prefer a refresher?
  Routine init_code
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    CodeComponent python_2
      Code Type = Py
      Begin Experiment:
        import random
    CodeComponent codeInit
      Code Type = Both
      Before JS Experiment:
        function randomsample(arr, size) {
            var shuffled = arr.slice(0), i = arr.length, min = i - size, temp, index;
            while (i-- > min) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(min);
        }
      Begin Experiment:
        import pandas as pd
        sub_data=pd.read_csv('subject_breakdowns.csv',sep=',')
        w_self_exp=[.4,.7,.9,1]
        w_env_exp=[.6,.7,1,.4]
      Begin JS Experiment:
        //document.body.style.cursor='none';
      Begin JS Routine:
        sub_data = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 1, method: TrialHandler.Method.RANDOM,
                extraInfo: expInfo, originPath: undefined,
                trialList: 'subject_breakdown.csv',
                seed: undefined, name: 'sub_data'
        });

        datasub = sub_data.getTrialList();
        //which_four=randint(1,490);


        //w_env_1=datasub[0]['w_env']  // row 1
        //w_env_2=datasub[1]['w_env']  // row 2

        // If you want to create two arrays for two types of condition,
        // you can filter the list of objects based on a variable in conditions file
        // e.g., column labelled "condition" for condition 0 and condition 1
        //cond0 = trialList.filter((trial) => trial['condition']==0)
        //cond1 = trialList.filter((trial) => trial['condition']==1)
      Begin Routine:
        corr_total=[]
    CodeComponent code_JS_2
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;

        random = Math.random;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }


        function randomsample(arr, size) {
            var shuffled = arr.slice(0), i = arr.length, min = i - size, temp, index;
            while (i-- > min) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(min);
        }


        ecdfArray = function(data) {

            "use strict";

            var f, sorted, xs, ps, i, j, l, xx;

            if (Array.isArray(data) && (data.length > 0)) {

              for (i = 0, l = data.length; i < l; ++i) {

                if (typeof(data[i]) !== 'number') {

                  throw new TypeError("cdf data must be an array of finite numbers, got:" + typeof(data[i]) + " at " + i);

                }

                if (!isFinite(data[i])) {

                  throw new TypeError("cdf data must be an array of finite numbers, got:" + data[i] + " at " + i);

                }

              }

              sorted = data.slice().sort(function(a, b) {

                return +a - b;

              });

              xs = [];

              ps = [];

              j = 0;

              l = sorted.length;

              xs[0] = sorted[0];

              ps[0] = 1 / l;

              for (i = 1; i < l; ++i) {

                xx = sorted[i];

                if (xx === xs[j]) {

                  ps[j] = (1 + i) / l;

                } else {

                  j++;

                  xs[j] = xx;

                  ps[j] = (1 + i) / l;

                }

              }

              f = function(x) {

                if (typeof(x) !== 'number') throw new TypeError('cdf function input must be a number, got:' + typeof(x));

                if (Number.isNaN(x)) return Number.NaN;

                var left = 0,

                  right = xs.length - 1,

                  mid, midval, iteration;

                if (x < xs[0]) return 0;

                if (x >= xs[xs.length - 1]) return 1;

                iteration = 0;

                while ((right - left) > 1) {

                  mid = Math.floor((left + right) / 2);

                  midval = xs[mid];

                  if (x > midval)

                    left = mid;

                  else if (x < midval)

                    right = mid;

                  else if (x === midval) {

                    left = mid;

                    right = mid;

                  }

                  ++iteration;

                  if (iteration>40) throw new Error("cdf function exceeded 40 bisection iterations, aborting bisection loop");

                }

                return ps[left];

              };

              f.xs = function() {

                return xs;

              };

              f.ps = function() {

                return ps;

              };

            } else {

              // missing or zero length data

              throw new TypeError("cdf data must be an array of finite numbers, got: missing or empty array");

            }

            return f;

          };
    CodeComponent for_sa_inst
      Code Type = Auto->JS
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      Begin Experiment:
        cor_test_real=[]
        num_consecutive_correct=0
        num_ss_correct=0
    CodeComponent cdf_function_2
      Code Type = JS
      Before JS Experiment:
        ecdfArray = function(data) {

            "use strict";

            var f, sorted, xs, ps, i, j, l, xx;

            if (Array.isArray(data) && (data.length > 0)) {

              for (i = 0, l = data.length; i < l; ++i) {

                if (typeof(data[i]) !== 'number') {

                  throw new TypeError("cdf data must be an array of finite numbers, got:" + typeof(data[i]) + " at " + i);

                }

                if (!isFinite(data[i])) {

                  throw new TypeError("cdf data must be an array of finite numbers, got:" + data[i] + " at " + i);

                }

              }

              sorted = data.slice().sort(function(a, b) {

                return +a - b;

              });

              xs = [];

              ps = [];

              j = 0;

              l = sorted.length;

              xs[0] = sorted[0];

              ps[0] = 1 / l;

              for (i = 1; i < l; ++i) {

                xx = sorted[i];

                if (xx === xs[j]) {

                  ps[j] = (1 + i) / l;

                } else {

                  j++;

                  xs[j] = xx;

                  ps[j] = (1 + i) / l;

                }

              }

              f = function(x) {

                if (typeof(x) !== 'number') throw new TypeError('cdf function input must be a number, got:' + typeof(x));

                if (Number.isNaN(x)) return Number.NaN;

                var left = 0,

                  right = xs.length - 1,

                  mid, midval, iteration;

                if (x < xs[0]) return 0;

                if (x >= xs[xs.length - 1]) return 1;

                iteration = 0;

                while ((right - left) > 1) {

                  mid = Math.floor((left + right) / 2);

                  midval = xs[mid];

                  if (x > midval)

                    left = mid;

                  else if (x < midval)

                    right = mid;

                  else if (x === midval) {

                    left = mid;

                    right = mid;

                  }

                  ++iteration;

                  if (iteration>40) throw new Error("cdf function exceeded 40 bisection iterations, aborting bisection loop");

                }

                return ps[left];

              };

              f.xs = function() {

                return xs;

              };

              f.ps = function() {

                return ps;

              };

            } else {

              // missing or zero length data

              throw new TypeError("cdf data must be an array of finite numbers, got: missing or empty array");

            }

            return f;

          };
      Begin JS Experiment:
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    CodeComponent set_transitions
      Code Type = Both
      Begin Experiment:
        # start
        island_b0='islands/hut.png'
        island_b1='islands/desert.png'
        islands_start=[island_b0,island_b1]

        #island arrival
        island_0='islands/mountain.png'
        island_1='islands/town.png'
        islands=[island_0,island_1]

        #boat='planes/sailboat.png'
        plane='planes/plane.png'
        train='planes/train.png'
        transport=[plane,train]


        switch_i=random.randint(0,1)
        if switch_i==0:
            state_transitions = {
            islands_start[0]:islands[0],
            islands_start[1]:islands[1]
                }
        else:
               state_transitions = {
            islands_start[1]:islands[0],
            islands_start[0]:islands[1]
                }


        switch_t=random.randint(0,1)
        action_transitions ={boat:island_0,train:island_1,plane:island_2}
        if switch_i==0:
            action_transitions = {
            plane:islands[0],
            train:islands[1]
                }
        else:
               action_transitions = {
            train:islands[0],
            plane:islands[1]
                }





        total_earned=0


        cor_test_real=[]
      Begin JS Experiment:
        island_b0 = "islands/hut.png";
        island_b1 = "islands/desert.png";
        islands_start = [island_b0, island_b1];
        island_0 = "islands/mountain.png";
        island_1 = "islands/town.png";
        islands = [island_0, island_1];
        plane = "planes/plane.png";
        train = "planes/train.png";
        transport = [plane, train];
        switch_i = randint(0, 1);
        if ((switch_i === 0)) {
            state_transitions = {[islands_start[0]]: islands[0], [islands_start[1]]: islands[1]};
        } else {
            state_transitions = {[islands_start[1]]: islands[0], [islands_start[0]]: islands[1]};
        }
        switch_t = randint(0, 1);
        if ((switch_i === 0)) {
            action_transitions = {[plane]: islands[0], [train]: islands[1]};
        } else {
            action_transitions = {[train]: islands[0], [plane]: islands[1]};
        }
        total_earned = 0;
        cor_test_real = [];
    CodeComponent track_experiment_duration
      Code Type = JS
      Begin JS Experiment:
        var todays= new Date().toLocaleTimeString([], { hour: '2-digit', minute: '2-digit' });
        psychoJS.experiment.addData("experiment_started", todays);
    CodeComponent action_setup
      Code Type = Both
      Begin Experiment:
        performance_arr=[];
      Begin JS Experiment:
        cor_test_real=[];
        get_times=[0]*20;
        corr_total=[];
        soon_hard=0;
        reivew=0;
        corr_total_strict=[];
        corr_total_rebuy=[];
        time_for_hard_officer=false;
        performance_arr=[];
    CodeComponent set_w_env_w_self
      Code Type = Both
      Begin JS Routine:
        if (expInfo["participant"].length) {
            part_id = expInfo["participant"];
            s = "id was succesful";
        } else {
            part_id = randint(3, 60);
        }
        psychoJS.experiment.addData("id_number", (part_id * 10000));
        psychoJS.experiment.addData("participant", (part_id * 10000));
      Begin Routine:
        #w_self_full=[.05,.45,.8,1];
        #w_env_full=[.2,.95,.8,.5];


        if len(expInfo['participant']):
             part_id=expInfo['participant']
             s='id was succesful'
        else:
            part_id=randint(3,50);



        psychoJS.experiment.addData("id_number", part_id*1000);
        psychoJS.experiment.addData("participant", part_id*1000);
    CodeComponent logistic_regression
      Code Type = JS
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      Begin JS Experiment:
        function sigmoid(x) {
          return 1 / (1 + Math.exp(-x));
        }

        function logisticRegression(features, labels, numIterations, learningRate) {
          const m = features.length;
          const n = features[0].length;
          let weights = new Array(n + 1).fill(0);

          for (let i = 0; i < numIterations; i++) {
            for (let j = 0; j < m; j++) {
              let prediction = sigmoid(dotProduct(weights, [1, ...features[j]]));
              let error = prediction - labels[j];
              for (let k = 0; k < n + 1; k++) {
                weights[k] = weights[k] - learningRate * error * ([1, ...features[j]][k]);
              }
            }
          }

          return weights;
        }

        function dotProduct(a, b) {
          return a.map((x, i) => a[i] * b[i]).reduce((m, n) => m + n);
        }
      Begin JS Routine:
        // sigmoid function
        function sigmoid(x) {
          return 1 / (1 + Math.exp(-x));
        }

        // logistic regression function
        function logisticRegression(features, labels, iterations, learningRate) {
          // add intercept column of 1s to features
          features = features.map(feature => [1, feature]);

          // initialize weights
          let weights = Array(features[0].length).fill(0);

          for (let i = 0; i < iterations; i++) {
            // calculate predictions
            const predictions = features.map(point => sigmoid(dotProduct(point, weights)));

            // calculate errors
            const errors = labels.map((label, index) => label - predictions[index]);

            // calculate gradients
            const gradients = features.map(
              (point, index) => point.map(value => value * errors[index])
            );

            // calculate mean gradients
            const meanGradients = gradients.reduce(
              (accumulator, currentValue) =>
                accumulator.map((value, index) => value + currentValue[index])
            ).map(value => value * (1 / features.length));

            // update weights
            weights = weights.map(
              (weight, index) => weight + learningRate * meanGradients[index]
            );
          }

          return weights;
        }

        // dot product function
        function dotProduct(a, b) {
          return a.reduce((accumulator, currentValue, currentIndex) =>
            accumulator + currentValue * b[currentIndex],
            0
          );
        }


        //features = [[.1],[ .2],[ .5],[ .7],[.4],[.4],[.4],[.4],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.1],[ .2],[ .5],[ .7],[.4],[.4],[.4],[.4],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.1],[ .2],[ .5],[ .7],[.4],[.4],[.4],[.4],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.1],[ .2],[ .5],[ .7],[.4],[.4],[.4],[.4],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.1],[ .2],[ .5],[ .7],[.4],[.4],[.4],[.4],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.1],[ .2],[ .5],[ .7],[.4],[.4],[.4],[.4],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9],[.9]];

        //labels = [0,0,1,1,1,1,1,1,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,1,1,1,1,1,1,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,1,1,1,1,1,1,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,1,1,1,1,1,1,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,1,1,1,1,1,1,0,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,0,0,0,1,1,1,1,1,1,0,1,1,1,1,1,1,1,1,1,1,1];
        numIterations = 120000;
        learningRate = 0.01;

        //var weight = logisticRegression(features, labels, numIterations, learningRate);
        //console.log(weight);
  Routine init_block
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    CodeComponent colors
      Code Type = Both
      Begin JS Routine:
        l1 = [(0.18), (0.38), (0.95)];
        l2 = [(.4), (.16), (.16)];
        l3 = [(1 / 225), (45 / 225), (110 / 225)];
        l4 = [(28 / 225), (28 / 225), (28 / 225)];

        l5 = [(28 / 225), (128 / 225), (38 / 225)];
        l6 = [(130 / 225), (45 / 225), (110 / 225)];
        l7 = [(128 / 225), (28 / 225), (28 / 225)];
        l8 = [(255/255),(222/255),(222/255)];
        l9= [(236/255),(255/255),(220/255)];
        l10=[(242/255),(204/255),(132/255)];
      Begin Routine:
        l1 = [(0.8039), (0.8039), (0.9608)];
        l2 = [(100 / 225), (36 / 225), (36 / 225)];
        l3 = [(30 / 225), (45 / 225), (110 / 225)];
        l4 = [(28 / 225), (28 / 225), (28 / 225)];

        l5 = [(28 / 225), (28 / 225), (28 / 225)];
        l6 = [(30 / 225), (45 / 225), (110 / 225)];
        l7 = [(28 / 225), (28 / 225), (28 / 225)];
        l8 = [(255/255),(222/255),(222/255)];
        l9= [(255/255),(240/255),(203/255)];
        l10=[(242/255),(204/255),(132/255)];
    CodeComponent set_w
      Code Type = Both
      Begin JS Routine:
        //w_self = w_self_exp[block.thisN];
        //w_env = w_env_exp[block.thisN];
        //w_envs=1;
        //w_envs=datasub[which_four*4+block.thisRepN]['w_env'];  // set w_env
        //w_self=datasub[which_four*4+block.thisRepN]['w_self'];  // set w_self
        //theoretical_mean_ev=datasub[which_four*4+block.thisN]['overall_ev'];  // set w_self
        //optimal_actions=datasub[which_four*4+block.thisN]['type'];  // set w_self
        //ev1=datasub[which_four*4+block.thisN]['ev1'];  // set w_self
        //ev2=datasub[which_four*4+block.thisN]['ev2'];  // set w_self
        //ev3=datasub[which_four*4+block.thisN]['ev3'];  // set w_self



        //part_id +=20;
        console.log('session is ' + part_id);
        //c_inelastic=datasub[part_id*4+block.thisRepN]['w_env'];  // set w_env
        //c_elastic=datasub[part_id*4+block.thisRepN]['w_self'];  // set w_self
        console.log("c_inelastic is "+ c_inelastic);
        console.log("c_elastic is "+ c_elastic);

        //theoretical_mean_ev=datasub[which_four*4+block.thisN]['overall_ev'];  // set w_self
        //optimal_actions=datasub[which_four*4+block.thisN]['type'];  // set w_self



        //w_env=w_envs;
        // Initialize the vector with all zeros
        let vector = [];

        for(let i = 0; i < 6; i++) {
          // generate a subarray of 4 ones followed by a zero
          let subarray = Array(4).fill(1);
          subarray.push(0);

          // shuffle the subarray randomly
          for(let j = subarray.length - 1; j > 0; j--) {
            const k = Math.floor(Math.random() * (j + 1));
            [subarray[j], subarray[k]] = [subarray[k], subarray[j]];
          }

          // add the subarray to the vector
          vector = vector.concat(subarray);
        }

        console.log(vector);
        shuffledArray=vector;
      Begin Routine:
        w_self=w_self_exp[block.thisN]
        w_env=w_env_exp[block.thisN]


        # set colors

        l1=[[222/225,185/225,135/225]]
        l2=[100/225,36/225,36/225]
        l3=[30/225,45/225,110/225]
        l4=[28/225,28/225,28/225]
        l1.append(l2)
        l1.append(l3)
        l1.append(l4)
        color_back=l1[block.thisN]
    PolygonComponent polygon_2
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    CodeComponent pre_generate_success
      Code Type = JS
      Begin JS Routine:
        function generateVectors(fractionOnes) {
          var combinedVector = [];

          // Generate 3 vectors
          for (var i = 0; i < 3; i++) {
            var vector = generateVector(fractionOnes);
            combinedVector = combinedVector.concat(vector);
          }

          return combinedVector;
        }

        // Function to generate a vector with the specified specifications
        function generateVector(fractionOnes) {
          var vector = [];

          // Calculate the desired number of ones for the total vector
          var totalOnes = Math.floor(fractionOnes * 10);

          // Calculate the number of ones for the first sub-vector
          var onesSubVector1 = Math.floor(totalOnes / 2);

          // Generate the first sub-vector
          var subVector1 = generateSubVector(onesSubVector1);
          shuffleSubVector(subVector1, 3); // Shuffle the sub-vector three times

          // Calculate the number of ones for the second sub-vector
          var onesSubVector2 = totalOnes - onesSubVector1;

          // Generate the second sub-vector
          var subVector2 = generateSubVector(onesSubVector2);
          shuffleSubVector(subVector2, 3); // Shuffle the sub-vector three times

          // Alternate between combining the sub-vectors in different orders
          if (Math.random() < 0.5) {
            vector = vector.concat(subVector1, subVector2);
          } else {
            vector = vector.concat(subVector2, subVector1);
          }

          return vector;
        }

        // Function to generate a sub-vector with the desired number of ones
        function generateSubVector(onesCount) {
          var subVector = [];
          for (var i = 0; i < onesCount; i++) {
            subVector.push(1);
          }
          while (subVector.length < 5) {
            subVector.push(0);
          }
          return subVector;
        }

        // Function to shuffle a sub-vector randomly a specified number of times
        function shuffleSubVector(subVector, numShuffles) {
          for (var i = 0; i < numShuffles; i++) {
            shuffleVector(subVector);
          }
        }

        // Function to shuffle a vector randomly
        function shuffleVector(vector) {
          for (var i = vector.length - 1; i > 0; i--) {
            var j = Math.floor(Math.random() * (i + 1));
            var temp = vector[i];
            vector[i] = vector[j];
            vector[j] = temp;
          }
        }
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        num_blocks=10
        if block.thisN<6:
            trial_length=15
        else:
            trial_length=30

        if block.thisN==0 or block.thisN==4:
            c_elastic=0.0
            c_inelastic=0.9
        elif block.thisN==1 or block.thisN==3:
            c_elastic=.9
            c_inelastic=0.0
        elif block.thisN==2 or block.thisN==5:
            c_elastic=.1
            c_inelastic=.1
        elif block.thisN==6:
            # ambigious block
            c_elastic=.34
            c_inelastic=.33
        else:
            c_inelastic=datasub[part_id*3+block.thisN-7]['c_inelastic'];
            c_elastic=datasub[part_id*3+block.thisN-7]['c_elastic'];



        #else:
         #   c_inelastic=datasub[part_id*3+block.thisN-7]['c_inelastic'];
          #  c_elastic=datasub[part_id*3+block.thisN-7]['c_elastic'];








        #l1.push(l2);
        #l1.push(l3);
        #l1.push(l4);
        #l1.push(l5);
        #l1.push(l6);
        #l1.push(l7);
        #l1.push(l8);
        #l1.push(l9);
        #l1.push(l10);
        shuffle(l1)
        if block.thisN==0:
            color_back=l1
        elif block.thisN==1:
            color_back=l2

        elif block.thisN==2:
            color_back=l3
        elif block.thisN==3:
            color_back=l4
        elif block.thisN==4:
            color_back=l5

        elif block.thisN==5:
            color_back=l6
        elif block.thisN==6:
            color_back=l7
        elif block.thisN==7:
            color_back=l8

        elif block.thisN==8:
            color_back=l9
        elif block.thisN==9:
            color_back=l10


        in_task=True
    CodeComponent actually_generate_vector
      Code Type = Both
      Begin JS Routine:
        percentageOfOnes = c_inelastic;
        percentageOfTwos =   (c_inelastic+c_elastic/2);
        percentageOfThrees = (c_inelastic+c_elastic);

        single_ticket_success = generateVectors(percentageOfOnes);
        two_ticket_success = generateVectors(percentageOfTwos);
        three_ticket_success = generateVectors(percentageOfThrees);

        psychoJS.experiment.addData("single_ticket_sucess", single_ticket_success);
        psychoJS.experiment.addData("two_ticket_sucess", two_ticket_success);
        psychoJS.experiment.addData("three_ticket_sucess", three_ticket_success);
  Routine make_choice
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    PolygonComponent polygon_5
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        num_actions=1
        feedback_action=[]
        timedOut=false
        #continueRoutine=False

        if cs==0:


            continueRoutine=False

        else:
            continueRoutine=True

        cur_winnings.alignHoriz="left"

        feedback_action=[]
        timedOut=false

        if cs==1 and forced_actions==false:
            show_total_earned=total_earned-40
        else:
            show_total_earned=total_earned

        if forced_actions==True:
            proscribed_actions=3
            forced=10
            gors=0
        else:

            forced=0
            if block.thisN<6:
                gors=0
            else:
                gors=10
      End Routine:
        print("forced actions post choice"+str(forced_actions))
    TextComponent press1_2
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.1
      pos = (-.25, -.05)
      startVal [time (s)] = 0.0
      text = Press 1 
      units = norm
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    ImageComponent dep_island
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .725)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    ImageComponent left_choice
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $left_plane
      pos = (-.25, .25)
      size = (.24,.48)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent right_choice
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $right_plane
      pos = (.25, .25)
      size = (.24, .48)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent destination_island
      image [set every repeat] = $end_island
      pos = (0, -.66)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 1,'1','9',9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent cur_winnings
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.06
      pos = (-.8,.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $gors
      text [set every repeat] = $'\n'+'Total Earnings Before Ticket: ' + str(show_total_earned+40)+'\nTotal Earnings After Ticket: '+str(show_total_earned)
      units = norm
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    CodeComponent timeOut2
      Code Type = Both
      Begin JS Experiment:
        total_opt_timedOut=0;
      Begin JS Routine:
        startchoiceTime = new Date();
        psychoJS.experiment.addData("choice_started", startchoiceTime);
        choice_timedOut=false;
        start_choice = Math.floor(startchoiceTime.getTime() / 1000);
        total_choice_timedOut=0;

        if ((forced_actions === true)){
            timeAllowed=15;
        } else {
            timeAllowed=15;

        }
      Each JS Frame:
        time_choice = new Date();
        currentChoice_time= Math.floor(time_choice.getTime() / 1000);



        if (((currentChoice_time - start_choice) > timeAllowed)) {
            timeOfChoicetimeOut = currentChoice_time;

            psychoJS.experiment.addData("choice_timeout_time", timeOfChoicetimeOut);
            psychoJS.experiment.addData("choice_timeout", 1);
            cs=0;
            retry_loop=0;
            total_choice_timedOut+=1;

            choice_timedOut=true;

            continueRoutine = false;

        }
      End JS Routine:
        end_choice = new Date();
        end_choice_time= Math.floor(end_choice.getTime() / 1000);
        psychoJS.experiment.addData("end_choice_time", end_choice_time);



        if ((total_choice_timedOut>7)){
            psychoJS.quit({message: 'You have timed out too many times and therefore cannot proceed with the study'});



        }
    TextComponent press9
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.1
      pos = (.25, -.05)
      startVal [time (s)] = 0.0
      text = Press 9
      units = norm
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    TextComponent planet_number_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (.75,-.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Planet ' +str(block.thisN+1) +' of ' +str(num_blocks)+ '\nTrip '+str(trials_task.thisN+1)+' of ' + str(trial_length)
      units = norm
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    ImageComponent image
      color [set every repeat] = $color_back
      image = transport_rules/Slide1.jpeg
      pos = (.65, .65)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      units = norm
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    TextComponent text_14
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (-.75, .75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $forced
      text [set every repeat] = Free ticket! 
      units = norm
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  Routine show_choice
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    PolygonComponent polygon_6
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent show_plane_selected
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine=false
        if cs==0 or choice_timedOut==True:
            continueRoutine=false
        elif trials_task.thisN<num_1_actions+num_3_actions:
            continueRoutine=false
        elif forced_actions==True:
            continueRoutine=false



        #means subject opted into choice
        if cs==1:
            # do we show the fact that the computer is choosing
            comp=0
            num_actions=1
           # acted_or_not=1.5
            #when do we show plane selected
            start_time=0
            if key_resp_2.keys=='1':
                plane_selected=left_plane
                var_time_left=10
                var_time_right=0

            elif key_resp_2.keys=='9':
                plane_selected=right_plane
                var_time_left=0
                var_time_right=10


        print('no issues 3')


        if trials_task.thisN>=total_num_forced:
            after_total_actions=10
        else:
            after_total_actions=0
    ImageComponent dep_island_3
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .725)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    ImageComponent right_choice_3
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $right_plane
      pos = (.25, .25)
      size = (.24, .48)
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $var_time_right
      units = norm
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    ImageComponent destination_island_3
      image [set every repeat] = $end_island
      opacity = .4
      pos = (0, -.66)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    ImageComponent left_choice_3
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $left_plane
      pos = (-.25, .25)
      size = (.24, .48)
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $var_time_left
      units = norm
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    TextComponent treasure
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      opacity = .4
      pos = (0, -.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Treasure 
      units = norm
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    TextComponent planet_number_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (.75,-.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $'Planet ' +str(block.thisN+1) +' of ' +str(num_blocks)+ '\nTrip '+str(trials_task.thisN+1)+' of ' + str(trial_length)
      units = norm
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    CodeComponent data_saving_2
      Code Type = Auto->JS
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      Begin Routine:
        #where to put computer opt in and self opt in
        print('no issues 4')


        thisExp.addData("method_selected", plane_selected)
        if cs==1 and action_transitions[plane_selected]==end_island:
            thisExp.addData("correct_chosen", 1)
        elif cs==0:
            thisExp.addData("correct_chosen", '')
        else:
            thisExp.addData("correct_chosen", 0)


        # only if he opted in will this even be recorded in which case he was wrong


        success_act=[]
        timedOut=False

        buy_Second_ticket.alignHoriz="left"
      End Routine:
        if key_resp_6.keys=='n':
            retry_loop=0
            num_actions=1
        print('no issues 5')
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent buy_Second_ticket
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.06
      pos = (-.35, -.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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      text:
        Do you want to purchase the 2nd ticket (cost: 20 coins) to jump from the platform

        Yes, in case my ride doesn't stop (press y)
        No I'll wait (press n)
    ImageComponent action_distinction
      image = distinguiish_actions/Slide3.jpeg
      pos = (-.7, .7)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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  Routine action_prep_2
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        warning_2.alignHoriz="left"

        if retry.thisN==0:
            depends_which_attempt=10
            slide_n=1
        else:
            depends_which_attempt=10
            slide_n=2
    CodeComponent initiate_countdown
      Code Type = JS
      Begin JS Routine:
        if ((retry.thisN===0)) {
            startTime = new Date();
        }
      Each JS Frame:
        leftTime = new Date();
        timeelapsed = (startTime - leftTime)/1000
        text_9 = Math.round(11+timeelapsed)
    CodeComponent determine_if_timeout_4
      Code Type = Both
      Each JS Frame:
        time_s = new Date();
        action_c = Math.floor(time_s.getTime() / 1000);
    CodeComponent code_26
      Code Type = Both
      Begin JS Routine:
        if ((retry.thisN === 0)) {
             time_now = new Date();
             action_started = Math.floor(time_now.getTime() / 1000);
             psychoJS.experiment.addData("action_started", action_started);


        }
      Begin Routine:
        if retry.thisN==0:
            a=1

            #const time_now = new Date();
            #const action_started = Math.floor(time_now.getTime() / 1000);
    PolygonComponent polygon_7
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent warning_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (-.4, .35)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Press the spacebar when your ride is in the middle of the screen

        Press space to continue

        (timer is running)
    KeyboardComponent ready_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent execute_loop_exit_3
      Code Type = Both
      Each Frame:
        if action_c-action_started>9:
            retry.finished=True
            continueRoutine=False


        print('action time was '+action_c-action_started)
      Each JS Frame:
        if (((action_c - action_started) > 13)) {
            action_cr = Math.floor(time_s.getTime() / 1000);

            psychoJS.experiment.addData("action_ended", action_cr);
            timedOut=true;

            retry.finished = true;

            continueRoutine = false;

        }
    CodeComponent object_type_2
      Code Type = Auto->JS
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      Begin Routine:
        if plane_selected==plane:
            selected_object='plane'

        elif plane_selected==train:
            selected_object='train'
    ImageComponent new_platform
      image [set every repeat] = $'distinguiish_actions/Slide' + str(slide_n) + '.jpeg'
      pos = (0, -.5)
      size = (0.8, 0.464)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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  Routine action_exec
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    PolygonComponent polygon_9
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    CodeComponent initiate_countdown_2
      Code Type = JS
      Each JS Frame:
        leftTime = new Date();
        timeelapsed = (startTime - leftTime)/1000
        text_9 = Math.round(8+timeelapsed)
    CodeComponent easy_or_hard
      Code Type = Auto->JS
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      Begin Routine:
        #if easy.finished==False:
         #   hard_or_easy_one=0
        #else:
         #   hard_or_easy_one=1
        if timedOut==true:
            continueRoutine = false;
    CodeComponent moving
      Code Type = Both
      Begin Experiment:
        yScale=.45
        minSize = .1
        maxSize = .1
        pathStart=[-1,-.95]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45

        posClock = core.Clock()
        sizeClock = core.Clock()

        #myPaths = data.TrialHandler(
        #nReps=1,
        #method='sequential',
        #extraInfo=expInfo,
        #originPath=-1,
        #trialList=data.importConditions('Book1paths.xlsx'),
        #seed=None,
        #name='myPaths')
        current_pos=[1]
      Begin JS Experiment:
        yScale = 0.45;
        minSize = 0.1;
        maxSize = 0.1;
        pathStart = [(- 1), (- 0.95)];
        pathN = 0;
        xScale = ((psychoJS.window.size[0] / psychoJS.window.size[1]) * 0.45);
        posClock = new util.Clock();
        sizeClock = new util.Clock();
        current_pos = [1];
      Begin JS Routine:
        yScale = 0.45;
        minSize = 0.1;
        maxSize = 0.1;
        cuePulse = 3;
        pathStart = [(- 1), (- 0.9)];
        pathN = 0;
        xScale = ((psychoJS.window.size[0] / psychoJS.window.size[1]) * 0.45);
        posClock = new util.Clock();
        sizeClock = new util.Clock();
        cueSize = minSize;
        cuePos = pathStart;
        posClock.reset();
        sizeClock.reset();
      Begin Routine:
        yScale=.45
        minSize = .1
        maxSize = .1
        cuePulse = 3
        pathStart=[-1,-.9]
        pathN = 0
        xScale=win.size[0]/win.size[1]*.45

        posClock = core.Clock()
        sizeClock = core.Clock()

        #myPaths = data.TrialHandler(
        #nReps=1,
        #method='sequential',
        #extraInfo=expInfo,
        #originPath=-1,
        #trialList=data.importConditions('Book1paths.xlsx'),
        #seed=None,
        #name='myPaths')



        #thisPath = myPaths.next()
        cueSize = minSize
        cuePos = pathStart
        posClock.reset()
        sizeClock.reset()
      Each Frame:
        #pathN = myPaths.thisN
        if action_2.keys == 'space':
            current_pos=cuePos
            continueRoutine = False;

        pathTime=1
        pathEnd=[1,-.95]
        #if posClock.getTime() > pathTime:
        #if posClock.getTime() > thisPath["pathTime"]:
           # if pathN < len(myPaths.trialList) - 1:
              #  pathStart = [float(thisPath["pathEnd"][0]),float(thisPath["pathEnd"][1])]
            #   pathStart = [float(pathEnd[0]),float(pathEnd[1])]
             #  thisPath = myPaths.nextthis()
              # posClock.reset()
            #else:
             #   continueRoutine = False;
        #cuePos = (xScale*(pathStart[0]+(float(thisPath['pathEnd'][0])-pathStart[0])*posClock.getTime()/float(thisPath['pathTime'])), yScale*(pathStart[1]+(float(thisPath['pathEnd'][1])-pathStart[1])*posClock.getTime()/float(thisPath['pathTime'])))
        cuePos = (xScale*(pathStart[0]+(float(pathEnd[0])-pathStart[0])*posClock.getTime()/float(pathTime)), yScale*(pathStart[1]+(float(pathEnd[1])-pathStart[1])*posClock.getTime()/float(pathEnd[1])))
      Each JS Frame:
        if ((action_2.keys === "space")) {
            current_pos = cuePos;

        }
        pathTime = 1;
        pathEnd = [1, (- 0.95)];
        cuePos = [(xScale * (pathStart[0] + (((Number.parseFloat(pathEnd[0]) - pathStart[0]) * posClock.getTime()) / Number.parseFloat(pathTime)))), (yScale * (pathStart[1] + (((Number.parseFloat(pathEnd[1]) - pathStart[1]) * posClock.getTime()) / Number.parseFloat(pathEnd[1]))))];
    KeyboardComponent action_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.2
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    ImageComponent cue_object_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent moving_cue_7
      color = -1.0000, -1.0000, -1.0000
      image [set every repeat] = $plane_selected
      pos [set every frame] = cuePos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent timer_text
      color = -1.0000, -1.0000, -1.0000
      font = open sans
      letterHeight = 0.1
      pos = (.65, .75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every frame] = $'Time until departure: '+ str(text_9)
      units = norm
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    CodeComponent end_after_one_2
      Code Type = Both
      Each Frame:
        if t>1.1:
            if len(action_2.keys) != 0:
                current_pos=[10,10]
            continueRoutine=False;
      Each JS Frame:
        if ((t > 1.1)) {
            if ((action_2.keys === undefined)) {
                action_2.rt = 1;
            }
            continueRoutine = false;
        }
  Routine try_again_2
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    CodeComponent initiate_countdown_3
      Code Type = JS
      Each JS Frame:
        leftTime = new Date();
        timeelapsed = (startTime - leftTime)/1000
        text_9 = Math.round(9+timeelapsed)
    CodeComponent determine_if_timeout
      Code Type = Both
      Each JS Frame:
        time_s = new Date();
        action_c = Math.floor(time_s.getTime() / 1000);
    CodeComponent execute_loop_exit
      Code Type = Both
      Each Frame:
        if action_c-action_started>7.5:
            retry.finished=True
            continueRoutine=False
      Each JS Frame:
        if (((action_c - action_started) > 10)) {
            action_cr = Math.floor(time_s.getTime() / 1000);

            psychoJS.experiment.addData("action_ended", action_cr);
            timedOut= true;
            retry.finished = true;

            continueRoutine = false;

        }
    CodeComponent skip_cs
      Code Type = Auto->JS
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      Begin Routine:
        if cs==0:
            retry.finished=True
            continueRoutine=False
    CodeComponent determine_success
      Code Type = Both
      Begin JS Experiment:
         dont_check_again=0;
      Begin JS Routine:
        if ((performance_arr.length>20)) {
            temp_array=performance_arr.slice(-20)
            percent_acc = ecdfArray(temp_array);
            per = percent_acc(Math.abs((0.3 - action_2.rt)));

        } else if  ((performance_arr.length>0)) {

            percent_acc = ecdfArray(performance_arr);
            //curent attempt
            per = percent_acc(Math.abs((0.3 - action_2.rt)));

        console.log(("now per is" + per.toString()));

        } else {
            per=.5;


        }



        if ((action_2.keys === undefined)) {
            action_2.keys = [];
            action_2.rt = [];
            per=1.1;

        } else if ((performance_arr === undefined)) {
            per=.5;
            performance_arr.push(Math.abs(.3-action_2.rt));
            console.log(performance_arr);



        }  else if ((performance_arr.length === 0)) {
            per=.5;

            console.log(action_2.rt);
            performance_arr.push(Math.abs(.3-action_2.rt));
            console.log(performance_arr);





        }  else {
            performance_arr.push(Math.abs(.3-action_2.rt));
            per = percent_acc(Math.abs((0.3 - action_2.rt)));



        }




        psychoJS.experiment.addData("cdf_pos", per);
        if ((per < 0.85)) {
            dont_check_again = 1;
            determined_already==0
        } else {
            if (((per > 0.85) && (dont_check_again === 0))) {
                determined_already = 1;
                success = 0;
            }
        }
      Begin Routine:

        percent_acc = ecdfArray(performance_arr)
        per=percent_acc(abs(.3-action_2.rt))
        performance_arr.append(abs(.3-action_2.rt))
        thisExp.addData("cdf_pos", per)
    CodeComponent new_w_self
      Code Type = Auto->JS
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      Begin Experiment:
        wself2=0
        wself3=0
        rp=0
      Begin Routine:
        if retry.thisN==0:
            num_actions=2
        elif retry.thisN==1:
            num_actions=3
        wself1=c_inelastic

        if num_actions==2:
            numerator=1-(c_inelastic+c_elastic/2)
            denominator=1-wself1
            thisExp.addData('two_action_numerator', numerator)
            thisExp.addData('two_action_denomenator',denominator)
            must_be_under=1-(numerator/denominator)
            wself2=must_be_under
            thisExp.addData('w_self2',must_be_under)


        elif num_actions==3:
             numerator=1-(c_inelastic+c_elastic)
             thisExp.addData('three_action_numerator', numerator)

             denominator=(1-wself1)*(1-wself2)
             thisExp.addData('three_action_denomenator',denominator)

             must_be_under=1-numerator/denominator
             wself3=must_be_under
             thisExp.addData('w_self3',must_be_under)



        else:
            must_be_under=.5


        if per <.15:
            print("determined_already is becoming 1")

            if num_actions==2:
                if per <wself2:
                    determined_already=1
                    success=1
            elif num_actions==3:
                if per <wself3:
                    determined_already=1
                    success=1
    CodeComponent track_success
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("position", abs(.3-action_2.rt))
        thisExp.addData("cdf", per)
        thisExp.addData("full_vector", performance_arr)
        thisExp.addData("forced_actions", forced_actions)
        choose_again_2.alignHoriz="left"

        if plane_selected==plane:
            transp="plane"
        elif plane_selected==train:
            transp="train"

        if success:
                got='Success! You made it onto the '+ str(transp)
        else:
                got='Sorry. You missed your ' + str(transp)

        #if trials_task.thisN <num_1_actions:
         #   forced_actions=True
          #  num_actions=1
           # retry_loop=0
            #continueRoutine=false


        #    num_actions=3

        if forced_actions==True or proscribed_actions==3:
            retry_loop=2
            continueRoutine=false



        if retry.thisN==1 and proscribed_actions==2:
            continueRoutine=false
        continueRoutine=false
    PolygonComponent polygon_10
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    TextComponent choose_again_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (-.45, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Enter loading area?\n\nCost: ' + 20 +' coins'+'\n\nYES-press "y"\nNO-press "n" \n\nnote- (timer is running!)'
      units = norm
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    KeyboardComponent key_try_again_2
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    CodeComponent re_do
      Code Type = Auto->JS
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      End Routine:
        if key_try_again_2.keys=='y' or trials_task<total_num_forced:
            continueRoutine=True
            num_actions+=1
        elif key_try_again_2.keys=='n':
             continueRoutine=False
             retry.finished=True
    ImageComponent new_platform_3
      image [set every repeat] = distinguiish_actions/Slide2.jpeg
      pos = (0, -.65)
      size = (0.6, 0.348)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.06
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Choose to enter
      units = norm
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  Routine feedback_2
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    CodeComponent determine_success_here
      Code Type = Auto->JS
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      Begin Experiment:
        determined_already=0
        success=False
      Begin Routine:
        if block.thisN<6:
            task_yet=0
            not_task_yet=13
        else:
            task_yet=13
            not_task_yet=0



        if block.thisN<3:
            session1=True
        else:
            session1=False

        if block.thisN>2:
            if cs==1:
                only_if_cs_1=15
            else:
                only_if_cs_1=0
        else:
             only_if_cs_1=0

        if cs==1:
                only_if_cs_2=15
        else:
                only_if_cs_2=0




        if plane_selected==plane:
            transp="plane"
        else:
            transp="train"


        if opt_in.keys=='1':
            num_actions=1
        elif opt_in.keys=='2':
            num_actions=2
        elif opt_in.keys=='3' or forced_actions==True:
            num_actions=3
        elif opt_in.keys=='9':
            num_actions=0

        print("determined already" +str(determined_already))
        if cs==1:
            if num_actions>1:
                if determined_already==0:
                    thisExp.addData("probablistic_press", 1)
                if num_actions==2:
                    if two_ticket_success[trials_task.thisN]==1:
                        success=True
                        thisExp.addData("pressed_ontime", 1)

                    else:
                        success=False
                        thisExp.addData("pressed_ontime", 0)

                elif num_actions==3:
                    if three_ticket_success[trials_task.thisN]==1:
                        success=True
                        thisExp.addData("pressed_ontime", 1)

                    else:
                        success=False
                        thisExp.addData("pressed_ontime", 0)

            if determined_already==1:
                thisExp.addData("probablistic_press", 0)


            print("he succesfully jumped ",str(success))

            if num_actions==1:
                if single_ticket_success[trials_task.thisN] == 1:
                    MADEIT=1
                else:
                    MADEIT=0
            elif num_actions==2:
                if two_ticket_success[trials_task.thisN]==1:
                    MADEIT=1
                else:
                    MADEIT=0
            elif num_actions==3:
                if three_ticket_success[trials_task.thisN]==1:
                    MADEIT=1
                else:
                    MADEIT=0

        else:
            MADEIT=0


        specify_reward_2.alignHoriz="left"
      End Routine:
        determined_already = 0;
        success=False
    PolygonComponent polygon_11
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent give_feedback_3
      Code Type = Both
      Begin Experiment:
        session1=False;
      Begin JS Experiment:
        session1=false;
      Begin JS Routine:
        if ((cs === 0)) {
            success = 0;
            got = "Did not try";
            dep_time = 2;
            dep_time_first = 0;
            dep_depends = 7.5;
        } else {
            dep_time = 2.5;
            dep_time_first = 2.5;
            dep_depends = 5.5;
        }
        ast = (c_inelastic * 1000);
        r = randint(0, 1000);





        if (MADEIT === 1) {
            dplace = action_transitions[plane_selected];

            plane_to_show = plane_selected;
            if ((session1 === true)) {
                time_for_plane = 15;
                time_for_walking = 0;

            } else {
                time_for_plane = 0;
                time_for_walking = 0;

            }

        } else {
            dplace = state_transitions[beg_island];

            plane_to_show = transport[0];
            if ((session1 === true)) {
                time_for_walking = 15;
            } else {
                time_for_walking = 0;
            }
            time_for_plane = 0;
        }
        if ((left_plane === plane_to_show)) {
            pos_c = [(- 0.25), 0.25];
        } else {
            if ((right_plane === plane_to_show)) {
                pos_c = [0.25, 0.25];
            } else {
                pos_c = [0, 0.15];
            }
        }
      Begin Routine:
        if cs==0:
            success=0
            got='Did not try';
            # set up timings
            dep_time=2
            dep_time_first=0
            dep_depends=7.5
        else:
             # set up timings
            dep_time=2.5
            #what about the origin image
            dep_time_first=2.5
            dep_depends=5.5


        #ast.extend(sst)
        ast=(w_env*10)
        r=random.randint(0,10)
      End JS Routine:
        const datess = new Date();

        const trial_ended_real = Math.floor(datess.getTime() / 1000);

        psychoJS.experiment.addData("trial_ended_real", trial_ended_real);
    CodeComponent get_feedback
      Code Type = Both
      Begin Experiment:
        tracking_success=[];
      Begin JS Experiment:
        tracking_success = [];
      Begin JS Routine:
        specify_reward.alignHoriz = "left";
        total_spent = 0;
        if ((dplace === end_island)) {
            got_there = true;
            tracking_success.push(1);
            suc = "You WIN!";
        } else {
            got_there = false;
            tracking_success.push(0);
            suc = "Sorry, you missed the treasure";
        }
        if ((cs === 0)) {
            num_actions = 0;
        }
        if (got_there) {
            total_reward = 150;
        } else {
            total_reward = 0;
        }
        if ((forced_actions === false)) {
            if ((num_actions === 0)) {
                total_earned += total_reward;
                total_spent = 0;
            } else {
                if ((num_actions === 1)) {
                    total_earned += (total_reward - 40);
                    total_spent = 40;
                } else {
                    if ((num_actions === 2)) {
                        total_earned += (total_reward - 60);
                        total_spent = 60;
                    } else {
                        if ((num_actions === 3)) {
                            total_earned += (total_reward - 80);
                            total_spent = 80;
                        }
                    }
                }
            }
        } else {
            total_earned += total_reward;
        }
      Begin Routine:
        specify_reward.alignHoriz="left"
        total_spent=0
        if dplace ==end_island:
            got_there=True
            tracking_success.append(1)
            suc="You WIN!"
        else:
            got_there=False
            tracking_success.append(0)
            suc="Sorry, you missed the treasure"
        if cs==0:
            num_actions=0

        if got_there:
            total_reward=150
        else:
            total_reward=0

        if forced_actions==False:
            if num_actions==0:
                total_earned+= total_reward
                total_spent=0
            elif num_actions==1:
                total_earned+= total_reward-40
                total_spent=40
            elif num_actions==2:
                total_earned+= total_reward-60
                total_spent=60
            elif num_actions==3:
                    total_earned+= total_reward-80
                    total_spent=80
        else:
            total_earned+=total_reward
      End JS Routine:
        success = 0;
        success_act = [];
      End Routine:
        success=0
        success_act=[];
    ImageComponent departure_state
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .725)
      size = (0.33, 0.66)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = norm
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    ImageComponent final_state
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $dplace
      pos = (0, -.725)
      size = (0.33, 0.66)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 13
      units = norm
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    TextComponent specify_reward
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.09
      pos = (-.85, -.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = $task_yet
      text [set every repeat] = $str(suc) +'\n\nCoins spent on tickets: '+str(total_spent)+'\nTotal earned on trip: '+ str(total_reward-total_spent) + ' coins' + '\nTotal Winnings: ' + str(total_earned)
      units = norm
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    ImageComponent tran_selected
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $plane_to_show
      pos [set every repeat] = pos_c
      size = (.2, .4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $time_for_plane
      units = norm
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    ImageComponent final_state_supposed_to
      image [set every repeat] = $end_island
      pos = (.7, -.66)
      size = (0.15, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      units = norm
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    TextComponent inteded_location
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (.7, -.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Treasure Location
      units = norm
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    CodeComponent save_data
      Code Type = Auto->JS
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      Begin Routine:
        if cs==0:
            num_actions=0
        total_actions=num_actions
        thisExp.addData("total_actions", total_actions)

        thisExp.addData("trial_reward",total_reward )
        thisExp.addData("total_reward", total_earned)
        thisExp.addData("destination", dplace)
        thisExp.addData("method_used", plane_to_show)
        thisExp.addData("boarded", success)
    CodeComponent record_transition_type
      Code Type = Auto->JS
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      Begin Routine:
        if success==1 or success==True:
            thisExp.addData("jumped_ontime", 1)
        elif success==0 or success==False:
            thisExp.addData("jumped_ontime", 0)


        se_number=3
        if total_actions==1:
            se_number=3
        elif total_actions==3:
            se_number=2
        elif total_actions==2:
            se_number=1
      End Routine:
        print("we do finish feedback")
        success=False
    TextComponent text_17
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (0, -.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 12
      text = Press space to continue
      units = norm
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    ImageComponent image_8
      color [set every repeat] = $color_back
      image = transport_rules/Slide1.jpeg
      pos = (.65, .65)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      units = norm
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    KeyboardComponent key_resp_13
      allowedKeys = 'space','right'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 12
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    ImageComponent selected_transport
      image [set every repeat] = $plane_selected
      pos = (.7, .15)
      size = (0.15, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $only_if_cs_1
      units = norm
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    ImageComponent walking
      image = planes/walking.png
      pos = (0, .1)
      size = (0.24, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_for_walking
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    ImageComponent new_platform_4
      image [set every repeat] = $'distinguiish_actions/Slide' + str(se_number) + '.jpeg'
      pos = (-.7, .4)
      size = (0.5, 0.348)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $only_if_cs_2
      units = norm
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    TextComponent selected_transport_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (.7, .32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $only_if_cs_1
      units = norm
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      text:
        You had selected
        (but not necessarily gotten on)
    TextComponent specify_reward_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.09
      pos = (-.85, -.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = $not_task_yet
      text [set every repeat] = $str(suc) +'\n\nCoins spent on tickets: '+str(total_spent)+'\nTotal earned on trip: '+ str(total_reward-total_spent) + ' coins'
      units = norm
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    TextComponent action_reminder
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (-.7, .7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $only_if_cs_2
      text = Tickets 
      units = norm
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
  Routine end_experiment
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    CodeComponent code_46
      Code Type = Auto->JS
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      Begin Routine:
        text_13.alignHoriz="left"
    CodeComponent code_9
      Code Type = Both
      End JS Routine:
        //console.log('transfer should occur');
        //psychoJS.setRedirectUrls("https://hujipsych.au1.qualtrics.com/jfe/form/SV_da1EsAzG9JHmeq2?id="+expInfo['participant']);
    CodeComponent end_experiment_2
      Code Type = JS
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      Begin JS Routine:
        var today= new Date().toLocaleTimeString([], { hour: '2-digit', minute: '2-digit' });
        console.log(today); //Ouput: "11:31"console.log(today); //Ouput: "11:31:41"
        psychoJS.experiment.addData("experiment_ended", today);
      End JS Routine:
        //psychoJS.quit({message: 'Taking you to the completion code'});
    TextComponent text_13
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = norm
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      text:
        To complete the final phase of the study (5 more min!) press space and on the following screen press "OK".

        When you see "Thank you for participating" You MUST PRESS OK and be redirected to another link.

        Otherwise your data will not be saved and you WILL NOT receive credit.

        Press space to and then ok to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine traveling_to_new_planet
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    PolygonComponent background_color_2
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent traveling_one
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every frame] = $'Traveling to a new planet!: '+ Math.round(4 - t,1)
      units = norm
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    ImageComponent space_ship
      image = planes/space_ship.png
      pos = (0, -.3)
      size = (0.75, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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  Routine ok_wait
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    CodeComponent initiate_countdown_4
      Code Type = JS
      Each JS Frame:
        leftTime = new Date();
        timeelapsed = (startTime - leftTime)/1000
        text_9 = Math.round(3+timeelapsed)
    CodeComponent determine_if_timeout_2
      Code Type = Both
      Each JS Frame:
        time_s = new Date();
        action_c = Math.floor(time_s.getTime() / 1000);
    PolygonComponent polygon
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    CodeComponent only_if_opted_out
      Code Type = Auto->JS
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      Begin Routine:
        if proscribed_actions==3:
            continueRoutine=False
        elif proscribed_actions==2:
            timedOut=false
        elif forced_actions==True and num_actions<4:
            continueRoutine=False
    TextComponent Computer_Selects
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.03)
      startVal [time (s)] = 0
      text = Please wait while we evaluate your action...
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    ImageComponent final_state_supposed_to_5
      image [set every repeat] = $end_island
      pos = (-.5, -.66)
      size = (0.15, 0.3)
      startVal [time (s)] = 0
      units = norm
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    TextComponent inteded_location_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, -.5)
      startVal [time (s)] = 0.0
      text = Treasure Location
      units = norm
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    CodeComponent execute_loop_exit_2
      Code Type = Both
      Each Frame:
        if action_c-action_started>7:
            retry.finished=True
            continueRoutine=False
        print('action time was '+action_c-action_started)
      Each JS Frame:
        if (((action_c - action_started) > 3.6)) {
            retry.finished = true;
            continueRoutine = false;
            action_cr = Math.floor(time_s.getTime() / 1000);
            psychoJS.experiment.addData("action_ended", action_cr);

        }
    TextComponent text_timer2_2
      color = -1.0000, -1.0000, -1.0000
      font = open Sans
      letterHeight = 0.1
      pos = (.65, .75)
      startVal [time (s)] = 0.0
      text [set every frame] = $'Time until departure: '+ str(text_9)
      units = norm
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    ImageComponent departure_state_4
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .725)
      size = (0.33, 0.66)
      startVal [time (s)] = 0
      units = norm
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  Routine ok_wait_2
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    CodeComponent only_if_opt_out
      Code Type = Auto->JS
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      Begin Routine:
        if proscribed_actions>1:
            continueRoutine=false

        if cs==0:
            if_opts=5
            tpla=0
            s_text=5
            sp=5
            textss= Math.round(5- t,1)
            dep='You have chosen to walk...'
            time_for_this=5
        elif cs==1:
            if_opts=0
            if block.thisN<3:
                tpla=3
            else:
                tpla=0
            s_text=3
            sp=3
            textss= Math.round(4 - t,1)
            dep='Waiting for your ride...'
            time_for_this=3



        print("time should be "+str(sp))

        if left_plane==plane_selected:
            pos_c=[-.25,.25]
        elif right_plane==plane_selected:
            pos_c=[.25,.25]
        else:
            pos_c=[0,.15]
    CodeComponent determine_if_timeout_3
      Code Type = Auto->JS
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      Begin Routine:
        if t>6:
            continueRoutine=false
      Each Frame:
        if cs==1:
            sp=3
            if t>2.9:
                continueRoutine=false

        elif cs==0:
            sp=5
            if t>5.1:
                continueRoutine=false
    PolygonComponent polygon_3
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sp
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    CodeComponent only_if_opted_out_2
      Code Type = Auto->JS
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      Begin Routine:
        if proscribed_actions==1:
            retry_loop=0
    TextComponent Computer_Selects_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time_for_this
      text [set every repeat] = $dep
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    ImageComponent departure_state_5
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .725)
      size = (0.33, 0.66)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $time_for_this
      units = norm
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    TextComponent planet_number_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (.75,-.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $s_text
      text [set every repeat] = $'Planet ' +str(block.thisN+1) +' of ' + str(num_blocks)+'\nTrip '+str(trials_task.thisN+1)+' of ' + str(trial_length)
      units = norm
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    TextComponent eight
      color = -1.0000, -1.0000, -1.0000
      font = open sans
      letterHeight = 0.1
      pos = (-.65, .75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sp
      text [set every frame] = $'Time until departure: '+ Math.round(sp - t,1)
      units = norm
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    ImageComponent tran_selected_2
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $plane_selected
      pos [set every repeat] = pos_c
      size = (.2, .4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0
      units = norm
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    ImageComponent walk
      image = planes/walking.png
      pos = (0, .1)
      size = (0.24, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $if_opts
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  Routine open_questions_2
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        text_to='Do you have any questions or feedback about any parts of the game?\n\n Response should be at least 2 sentences.\n\n'
        document.body.style.cursor='auto';

        thisExp.addData("label", la_opt_in)
        thisExp.addData("control", feat_lr)
    TextboxComponent textbox_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.05
      pos = (0, -.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        Enter text here
    TextComponent text_18
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      text = Press this button to move on (you might need to press slightly below) 
      units = norm
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    MouseComponent mouse_2
      clickable = text_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_19
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_to
      units = norm
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    CodeComponent force_write_2
      Code Type = Auto->JS
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      Begin Routine:
        please_write_more.alignHoriz="left"
        if need_feedback.thisN==0:
            time_to_show=0
        elif need_feedback.thisN>0:
            time_to_show=100000
      End Routine:
        if len(textbox_2.text)>30:
            need_feedback.finished=True
    TextComponent please_write_more_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_show
      units = norm
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      text:
        Please provide us with more detailed feedback in the textbox.
        Specifically,
        1) Did you feel like overall you were able to do well in the task
        2) Was there anything confusing to you about the task?
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  Routine timedOUT
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    CodeComponent trial_ended
      Code Type = JS
      Begin JS Routine:
        const time_end = new Date();

        const trial_ended = Math.floor(time_end.getTime() / 1000);

        action_ending_now = Math.floor(time_end.getTime() / 1000);
        psychoJS.experiment.addData("action_ended", action_ending_now);

        psychoJS.experiment.addData("trial_ended", trial_ended);
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if timedOut==True:
            continueRoutine=True
        else:
            continueRoutine=False
    PolygonComponent polygon_4
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
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    TextComponent text_28
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      text = TIMED OUT!!
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  Routine timedOut_Lost
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    CodeComponent trial_ended_2
      Code Type = Auto->JS
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      Begin Routine:
        if opt_timedOut==false:
            if opt_in.keys=='0' or opt_in.keys=='1' or opt_in.keys=='2' or opt_in.keys=='3':
                sreview_ins.finished=True
                continueRoutine=False
            elif opt_timedOut==True:
                continueRoutine=False
            else:
                continueRoutine=False
        elif opt_timedOut==true:
            total_earned-=100
    CodeComponent penalize
      Code Type = Auto->JS
    PolygonComponent polygon_16
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_29
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $'TIMED OUT!!\n\nBandits got to you and stole 100 coins.\n\nNew current earnings: ' +str(total_earned)
  Routine num_tickets_query
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    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Routine:
        document.body.style.cursor='auto';
        if plane_selected==left_plane:
            pos_query=[-.1,0]
        else:
            pos_query=[-.85,0]
    PolygonComponent polygon_24
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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    TextComponent ticket_officer_query_3
      color = -1.0000, -1.0000, -1.0000
      font = Open sans
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 25
      units = norm
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      text:
        CORRECT ANSWER EARNS +500 bonus!

        On this planet, the optimal number of tickets to buy is:
    SliderComponent slider_3
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0039, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('0 tickets','1 ticket', '2 tickets', '3 tickets')
      letterHeight = 0.05
      pos = (0, -0.7)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      styles = rating
      ticks = (1, 2, 3, 4)
      units = norm
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  Routine one_or_three_2
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        text_32.alignHoriz="left"



        if block.thisN<6:
            if trials_task.thisN==0:
                be_ready='Welcome to your new planet!\n\nNow you have a chance to practice the game. You will start with 3 free tickets to get you started\n\nPress space when ready'

            elif trials_task.thisN==num_3_actions:

                if c_elastic==.9:
                    be_ready="Hopefully by now it's clear that only by purchasing 3 tickets (LOADING AREA) are you consistenly succesful in catching your ride\n\nYou will no longer receive free tickets so you need to select how many tickets you want.\n\n Press space to continue"
                elif c_inelastic==.9:
                    be_ready="Your ride actually would stop for you with 1 ticket! So purchasing extra tickets, since they do cost money, is a WASTE (that affects your real money bonus)\n\n\n\nYou will no longer receive free tickets so you need to select how many tickets you want.\nPress space to continue"
                elif c_inelastic<.3 and c_elastic<.3:
                    be_ready="Oof. Doesn't seem like the vehicle stops for you nor does purchasing extra tickets helps.\n\nIn this case purchasing tickets is a WASTE OF MONEY\n\n\n\nYou will no longer receive free tickets so you need to select how many tickets you want.\n\nPress space to continue"

                else:
                    continueRoutine=false
            elif trials_task.thisN+1==11:
                if c_elastic==.9:
                    be_ready="Hopefully by now it's clear that only by purchasing 3 tickets (LOADING AREA) are you consistenly succesful in catching your ride\n\nPress space to continue"
                elif c_inelastic==.9:
                    be_ready="Your ride actually would stop for you with 1 ticket! So purchasing extra tickets, is a WASTE (that affects your real money bonus)\n\nPress space to continue"
                elif c_inelastic<.3 and c_elastic<.3:
                    be_ready="Oof. Doesn't seem like the vehicle stops for you nor does purchasing tickets is a waste of money.\n\nIn this case its best to SAVE MONEY by WALKING\n\nPress space to continue"
            elif force_divergence==0 and trials_task.thisN>5 and block.thisN>2:
                be_ready="Notice- you may have won because walking would also take you to the treasure\n\nHowever, generally walking rarely wins you money"

            else:
                continueRoutine=false

        else:
            if trials_task.thisN==0:
                be_ready='Welcome to your new planet!\n\nNow it is up to you to figure out how this planet works\n\nRemmember that any coins you earn factors into a real money bonus of up to 5$!\n\nAs a first time visitor, you will receive 3 free tickets so that you can win if \n\na) Your ride stops for you\nOR\nb)You manage to jump from either platform\n\nIt could be however that you dont actually need to purchase 3 tickets to win\n\nPress space when ready'

            else:
               # be_ready='Remmember that any coins you earn factors into a real money bonus\n\nYou will still occasionally be provided with free tickets\n\nPress space when ready'

                continueRoutine=false
    PolygonComponent polygon_23
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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    TextComponent text_32
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.06
      pos = (-.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text [set every repeat] = $be_ready
      units = norm
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
  Routine review_routes
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    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Experiment:
        set_of_instructions=1
        #slide_review=1

        # for testing
        slide_review=1
        quiz_set=1
        set_of_instructions=1



        before_task=true
        in_task=false
      Begin Routine:
        if before_task==True:
            if set_of_instructions==1:
                if review_first.thisN==0:
                    slide_review=1
                if key_resp_first_3.keys=="right" and slide_review<4:
                    slide_review +=1
                elif key_resp_first_3.keys=="left" and slide_review>1:
                    slide_review -=1


            elif set_of_instructions==2:
                if review_second.thisN==0:
                    slide_review=4
                if key_resp_first_3.keys=="right" and slide_review<7:
                    slide_review +=1
                if key_resp_first_3.keys=="left" and slide_review>5:
                    slide_review -=1


            elif set_of_instructions==3:
               if review_third.thisN==0:
                    slide_review=7
               if key_resp_first_3.keys=="right" and slide_review<12:
                   slide_review +=1
               if key_resp_first_3.keys=="left" and slide_review>8:
                    slide_review -=1

            elif set_of_instructions==4:
               if review_fourth.thisN==0:
                    slide_review=12
               if key_resp_first_3.keys=="right" and slide_review<18:
                   slide_review +=1
               if key_resp_first_3.keys=="left" and slide_review>13:
                    slide_review -=1
            elif set_of_instructions==5:
               if review_fifth.thisN==0:
                    slide_review=18
               if key_resp_first_3.keys=="right" and slide_review<23:
                   slide_review +=1
               if key_resp_first_3.keys=="left" and slide_review>19:
                    slide_review -=1
            elif set_of_instructions==6:
               set_actions=2
               if review_sixth.thisN==0:
                    slide_review=23

               if key_resp_first_3.keys=="right" and slide_review<27:
                   slide_review +=1
               if key_resp_first_3.keys=="left" and slide_review>23:
                    slide_review -=1
            elif set_of_instructions==7:
               if review_seventh.thisN==0:
                    slide_review=28

               if key_resp_first_3.keys=="right" and slide_review<39:
                   slide_review +=1
               if key_resp_first_3.keys=="left" and slide_review>29:
                    slide_review -=1



        elif in_task==True:
            if block.thisN==3:
                continueRoutine=True
            else:
                continueRoutine=False
            if review_loop_1.thisN==0:
                slide_review=40
            if key_resp_first_3.keys=="right" and slide_review<49:
                slide_review +=1
            elif key_resp_first_3.keys=="left" and slide_review>40:
                slide_review -=1
      End Routine:
        if before_task==True:
             if set_of_instructions==1:
                if slide_review == 4 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_first.finished=True
                    print('set of instructions before quiz')
                    set_of_instructions+=1
                    continueRoutine=false
             elif set_of_instructions==2:
                if slide_review == 7 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_second.finished=True
                    set_of_instructions+=1
                    continueRoutine=false
             elif set_of_instructions==3:
                if slide_review == 12 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_third.finished=True
                    set_of_instructions+=1
                    continueRoutine=false
             elif set_of_instructions==4:
                if slide_review == 18 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_fourth.finished=True
                    set_of_instructions+=1
                    continueRoutine=false

             elif set_of_instructions==5:
                if slide_review == 23 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_fifth.finished=True
                    set_of_instructions+=1
                    continueRoutine=false
             elif set_of_instructions==6:
                if slide_review == 27 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_sixth.finished=True
                    set_of_instructions+=1
                    continueRoutine=false
             elif set_of_instructions==7:
                if slide_review == 39 and key_resp_first_3.keys=="right":
                    slide_review +=1
                    review_seventh.finished=True
                    set_of_instructions+=1
                    continueRoutine=false


        if in_task==True:
            if slide_review==49 and key_resp_first_3.keys=="right":
                 review_loop_1.finished=True
                 continueRoutine=false


        #elif set_of_instructions==2:
         #   if slide_review==14 and key_resp_first_3.keys=="right":
          #      slide_review +=1
           #     set_of_instructions+=1

            #    review_loop_2.finished=True
             #   continueRoutine=false
        #elif set_of_instructions==3:

         #   if slide_review==25 and key_resp_first_3.keys=="right":
          #      slide_review +=1
           #     set_of_instructions+=1
            #    slide_review=25
             #   review_loop_3.finished=True
              #  continueRoutine=false


        #elif set_of_instructions==4:

         #   if slide_review==46 and key_resp_first_3.keys=="right":
          #      slide_review +=1
           #     set_of_instructions+=1
            #    new_instr.finished=True
             #   continueRoutine=false
              #  started_new_practice=True


        #elif set_of_instructions==5:
         #   if slide_review==46 and key_resp_first_3.keys=="right":
          #      slide_review +=1
           #     set_of_instructions+=1
            #    new_instr2.finished=True
             #   continueRoutine=false
    KeyboardComponent key_resp_first_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      color = -1.0000, -1.0000, -1.0000
      image [set every repeat] = $'instr_new_draft/Slide' + str(slide_review) + '.jpeg'
      size = (1.69, 1)
      startVal [time (s)] = 0.0
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  Routine quiz
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    CodeComponent code_8
      Code Type = Both
      Begin Experiment:
        move_on_hard_officer=False
        rebuy_please=False
        #quiz_set=7
        cor_first=0
        times_quiz_wrong=0
        num_wrong=0
      Begin JS Experiment:
        move_on_hard_officer = false;
        rebuy_please = false;
        cor_first = 0;
        times_quiz_wrong = 0;
        num_wrong = 0;
      Begin JS Routine:
        if ((num_wrong < 4)) {
            texts = "note- too many failures on the quizzes will result in not being able to proceed with the study";
        } else {
            texts = "WARNING- you have already failed a number of quizzes. More mistakes will risk you being kicked out of the study. Plase read the slides carefully and review them as necessaty.";
        }
        if ((before_task === true)) {
            if ((quiz_set === 1)) {
                test_q.alignHoriz = "left";
                if ((round1.thisN === 0)) {
                    text_to_show = "Quiz: At the top of the screen is:\n\na) Current location\nb) Location with the treasure";
                } else {
                    if ((round1.thisN === 1)) {
                        text_to_show = "Quiz: At the bottom of the screen is:\n\na) Current location\nb) teasure location";
                    } else {
                        if ((round1.thisN === 2)) {
                            text_to_show = "Quiz: True/False   The coins I find in the treasure will have no effect on my bonus payment at the end of the experiment\n\na) True\nb) False";
                        } else {
                            if ((round1.thisN === 3)) {
                                if ((cor_first >= 3)) {
                                    text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                } else {
                                    text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                }
                            }
                        }
                    }
                }
            } else {
                if ((quiz_set === 2)) {
                    test_q.alignHoriz = "left";
                    if ((round2.thisN === 0)) {
                        cor_first = 0;
                        text_to_show = "Quiz: If you walk from the fountain you end up at (hint- it rhymes) :\n\na) The mountain\nb) The town";
                    } else {
                        if ((round2.thisN === 1)) {
                            text_to_show = "Quiz: If you walk from the desert you end up at:\n\na) The mountain\nb) The town";
                        } else {
                            if ((round2.thisN === 2)) {
                                if ((cor_first === 2)) {
                                    text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                } else {
                                    text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                }
                            }
                        }
                    }
                } else {
                    if ((quiz_set === 3)) {
                        test_q.alignHoriz = "left";
                        if ((round3.thisN === 0)) {
                            cor_first = 0;
                            text_to_show = "Quiz: Purchasing a ticket :\n\na) Allows you to select a vehicle (plane/train) based on where the treasure is found\nb) Allows you to choose where the treasure is\nc) Guarantees you protection from the bandits";
                        } else {
                            if ((round3.thisN === 1)) {
                                text_to_show = "Quiz: The plane always takes you to (hint- its the same color\n\na) The mountain\nb) The town";
                            } else {
                                if ((round3.thisN === 2)) {
                                    text_to_show = "Quiz: True/False   Where the plane/train go to depends on where you set off from\n\na) True\nb) False";
                                } else {
                                    if ((round3.thisN === 3)) {
                                        if ((cor_first === 3)) {
                                            text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                        } else {
                                            text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                        }
                                    }
                                }
                            }
                        }
                    } else {
                        if ((quiz_set === 4)) {
                            test_q.alignHoriz = "left";
                            if ((round4.thisN === 0)) {
                                cor_first = 0;
                                text_to_show = "Quiz: True/False   Purchasing a ticket guarantees that the plane/train will stop for you at the station:\n\na) True\nb) False";
                            } else {
                                if ((round4.thisN === 1)) {
                                    text_to_show = "Quiz: If you are at the fountain and the train does not stop for you, you will end up\n\na) Walking to the mountain\nb) Walking to the town\nc) Taking the plane to the town\nd) Taking the plane to the mountain";
                                } else {
                                    if ((round4.thisN === 2)) {
                                        text_to_show = "Quiz: True/False   On every planet, the frequency with which the plane/train stop for you is the same\n\na) True\nb) False";
                                    } else {
                                        if ((round4.thisN === 3)) {
                                            if ((cor_first === 3)) {
                                                text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                            } else {
                                                text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                            }
                                        }
                                    }
                                }
                            }
                        } else {
                            if ((quiz_set === 5)) {
                                test_q.alignHoriz = "left";
                                if ((round5.thisN === 0)) {
                                    text_to_show = "Quiz: True/False   Purchasing a second ticket to jump on improves my chances of getting on my selected ride in case it does not stop for me \n\na) True\nb) False";
                                    cor_first = 0;
                                } else {
                                    if ((round5.thisN === 1)) {
                                        text_to_show='Quiz: True/False If I succeed after purchasing two tickets it may be that my ride stopped for me\n\na) True\nb) False'
                                    } else {
                                        if ((round5.thisN === 2)) {
                                            if ((cor_first === 2)) {
                                                text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                            } else {
                                                text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                            }
                                        }
                                    }
                                }
                            } else {
                                if ((quiz_set === 6)) {
                                    test_q.alignHoriz = "left";
                                    if ((round6.thisN === 0)) {
                                        text_to_show = "Quiz: True/False  If I missed my ride I could have still succeeded if I only purchased a single ticket:\n\na) True. When I chose to jump I gave up on the chance of boarding if my vehicle stops\n\nb) False. If I fail to get on it must be that my vehicle stopped for me AND I failed to jump on";
                                        cor_first = 0;
                                    } else {
                                        if ((round6.thisN === 1)) {
                                            text_to_show = "Quiz: True/False   Even with a wide platform I should still attempt to press reasonably close to the center\n\na) True. A wide platform doesn't mean I can jump from anywhere. \nb) False. A wide platform means no matter how off I am i'll still get on";
                                        } else {
                                            if ((round6.thisN === 2)) {
                                                if ((cor_first === 2)) {
                                                    text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                                } else {
                                                    text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                                }
                                            }
                                        }
                                    }
                                } else {
                                    if ((quiz_set === 7)) {
                                        test_q.alignHoriz = "left";
                                        if ((round7.thisN === 0)) {
                                            text_to_show = "Quiz: The 3rd ticket (loading station):\n\na) Improves my chances of getting on my ride (but how much varies by planet) \nb) Can only worsen my chances of getting on my ride\nc) Depends on the planet whether it improves or worsens my chances";
                                            cor_first = 0;
                                        } else {
                                            if ((round7.thisN === 1)) {
                                                text_to_show = "Quiz: If the ride generally stops for me after the first ticket, its always better to buy extra tickets \n\na) I have nothing to lose by purchasing three tickets\nb) Extra tickets do take away from my bonus so if I can win with fewer tickets, I should save the money";
                                            } else {
                                                if ((round7.thisN === 2)) {
                                                    text_to_show = "Quiz:  If I purchase 3 tickets and make it on\n\na) It could be my ride stopped for me (ticket 1), I jumped from the regular platform (ticket 2), or I jumped from the loading area (ticket 3)\n\nb) It must be that my ride did not stop for me (ticket 1) but I jumped on anyway\n\nc) It must be that I specifically made it from the loading area";
                                                } else {
                                                    if ((round7.thisN === 3)) {
                                                        if ((cor_first === 3)) {
                                                            text_to_show = "Nice job! You are on a roll.\n\n Press space to continue";
                                                            before_task = false;
                                                            loop7.finished = true;
                                                        } else {
                                                            text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                                                        }
                                                    }
                                                }
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        }
        if ((in_task === true)) {
            if ((block.thisN === 3)) {
                continueRoutine = true;
            } else {
                act_testing.finished = true;
                relearn_rules.finished = true;
                continueRoutine = false;
            }
            if ((act_testing.thisN === 0)) {
                corr_total = 0;
                text_to_show = "If after purchasing three tickets I still end up walking, then jumping is extremely difficult AND my ride never stops for me\n\na) True\nb) False";
            } else {
                if ((act_testing.thisN === 1)) {
                    text_to_show = "If I frequently board the train/plane after jumping from the regular platform, then the platform is likely relatively wide OR my ride usually stops for me \n\na) True\nb) False";
                } else {
                    if ((act_testing.thisN === 2)) {
                        text_to_show = "If I frequently board the train/plane, BUT ONLY from the LOADING STATION, then the LOADING AREA is wide enough for success BUT the vehicle does not stop for me otherwise \n\na) True\nb) False";
                    } else {
                        if ((act_testing.thisN === 3)) {
                            if ((corr_total === 3)) {
                                text_to_show = "Nice job! Now you will explore some narrow practice blocks with feedback.\n\nThese blocks will help get you accustomed to the new version of the game\n\nPress space to continue";
                            } else {
                                text_to_show = "Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue";
                            }
                        }
                    }
                }
            }
        }
      Begin Routine:
        if num_wrong<4:
            texts='note- too many failures on the quizzes will result in not being able to proceed with the study'
        else:
            texts='WARNING- you have already failed a number of quizzes. More mistakes will risk you being kicked out of the study. Plase read the slides carefully and review them as necessaty.'



        if before_task==True:
            if quiz_set==1:
                test_q.alignHoriz="left"
                if round1.thisN==0:
                    text_to_show='Quiz: At the top of the screen is:\n\na) Current location\nb) Location with the treasure'
                elif round1.thisN==1:
                    text_to_show='Quiz: At the bottom of the screen is:\n\na) Current location\nb) Location with the treasure'
                elif round1.thisN==2:
                    text_to_show='Quiz: True/False   The coins I find in the treasure and the coins I lose to the bandits will have no effect on my bonus payment at the end of the experiment\n\na) True\nb) False'
                elif round1.thisN==3:
                    if cor_first>=3:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'
        #else:

            elif quiz_set==2:
                test_q.alignHoriz="left"
                if round2.thisN==0:
                    cor_first=0
                    text_to_show='Quiz: If you walk from the fountain you end up at (hint- it rhymes) :\n\na) The mountain\nb) The town'
                elif round2.thisN==1:
                    text_to_show='Quiz: If you walk from the desert you end up at:\n\na) The mountain\nb) The town'
                elif round2.thisN==2:
                    if cor_first==2:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'

            elif quiz_set==3:
                test_q.alignHoriz="left"
                if round3.thisN==0:
                    cor_first=0
                    text_to_show='Quiz: Purchasing a ticket :\n\na) Allows you to select a vehicle (plane/train) based on where the treasure is found\nb) Allows you to choose where the treasure is\nc) Guarantees you protection from the bandits'
                elif round3.thisN==1:
                    text_to_show='Quiz: The plane always takes you to (hint- its the same color\n\na) The mountain\nb) The town'
                elif round3.thisN==2:
                    text_to_show='Quiz: True/False   Where the plane/train go to depends on where you set off from\n\na) True\nb) False'
                elif round3.thisN==3:
                    if cor_first==3:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'


            elif quiz_set==4:
                test_q.alignHoriz="left"
                if round4.thisN==0:
                    cor_first=0
                    text_to_show='Quiz: True/False   Purchasing a ticket guarantees that the plane/train will stop for you at the station:\n\na) True. \nb) False. It may not stop for you in which case you waste money'
                elif round4.thisN==1:
                    text_to_show='Quiz: If you are at the fountain and the train does not stop for you, you will end up\n\na) Walking to the mountain\nb) Walking to the town\nc) Taking the plane to the town\nd) Taking the plane to the mountain'
                elif round4.thisN==2:
                    text_to_show='Quiz: True/False   On every planet, the frequency with which the plane/train stop for you is the same\n\na) True\nb) False'
                elif round4.thisN==3:
                    if cor_first==3:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'


            elif quiz_set==5:
                test_q.alignHoriz="left"
                if round5.thisN==0:
                    text_to_show='Quiz: True/False   Purchasing a second ticket to jump on can only improve my chances of getting on my selected ride in case it does not stop for me \n\na) True\nb) False'
                    cor_first=0
                elif round5.thisN==1:
                    text_to_show='Quiz: True/False If I succeed after purchasing two tickets it may be that my ride still stopped for me\n\na) True\nb) False'
                elif round5.thisN==2:
                    if cor_first==2:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'




            elif quiz_set==6:
                test_q.alignHoriz="left"
                if round6.thisN==0:
                    text_to_show='Quiz: True/False   If I missed my ride the only explanation is that the platform (on this planet) must be very narrow:\n\na) True. Otherwise I would have caught my ride!\nb) False. I still have to press the spacebar close enough to the center to get on. '
                    cor_first=0
                elif round6.thisN==1:
                    text_to_show='Quiz: True/False   Even with a wide platform I still need to press close to the center\n\na) True\nb) False'
                elif round6.thisN==2:
                    if cor_first==2:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'


            elif quiz_set==7:
                test_q.alignHoriz="left"
                if round7.thisN==0:
                    text_to_show='Quiz: The 3rd ticket (loading station):\n\na) Usually improves my chances of getting on my ride (but how much varies by planet) \nb) Can only worsen my chances of getting on my ride\nc) Depends on the planet whether it improves or worsens my chances'
                    cor_first=0
                elif round7.thisN==1:
                    text_to_show='Quiz: True/False   If the general platform was narrow, the LOADING AREA must also be narrow\n\na) True\nb) False'
                elif round7.thisN==2:
                    text_to_show='Quiz:  If I purchase 3 tickets and make it on\n\na) It could be my ride stopped for me (ticket 1), I jumped from the regular platform (ticket 2), or I jumped from the loading area (ticket 3)\n\nb) It must be that my ride did not stop for me (ticket 1) but I jumped on anyway\n\nc) It must be that I specifically made it from the loading area'
                elif round7.thisN==3:
                    if cor_first==3:
                      text_to_show='Nice job! You are on a roll.\n\n Press space to continue'
                      before_task=false
                      loop7.finished=True

                    else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'




        if in_task==True:

            if block.thisN==3:
                continueRoutine=True
            else:
                act_testing.finished=True
                relearn_rules.finished=True
                continueRoutine=False



            if act_testing.thisN==0:
                corr_total=0
                text_to_show="If after purchasing three tickets I still end up walking, then the LOADING STATION is likely extremely difficult to jump from\n\na) True\nb) False"
            elif act_testing.thisN==1:
                text_to_show="If I frequently board the train/plane after jumping from the regular platform, then the platform is likely relatively wide \n\na) True\nb) False"
            elif act_testing.thisN==2:
                text_to_show="If I frequently board the train/plane, but only from the LOADING STATION\, then only the LOADING AREA is wide enough for success \n\na) True\nb) False"
            elif act_testing.thisN==3:
                if corr_total==3:
                      text_to_show='Nice job! Now you will explore some narrow practice blocks with feedback.\n\nThese blocks will help get you accustomed to the new version of the game\n\nPress space to continue'
                else:
                      text_to_show='Sorry something seems to be unclear to you.\nWe are going to review the instructions/tips one more time.\n\nPress space to continue'
        #else:
         #   if act_testing.thisN==0:
          #      text_to_show='In order to catch a ride you must press the spacebar when'
           #     correct_mat='a'
            #    answer_one='A) The vehicle is exactly in the middle of the screen'
             #   answer_two='B) As soon as I see the vehicle '
              #  answer_three='C) Depends on the vehicle. To catch the plane I press as soon as I see it, but for the train I must press when I see them in the middle of the screen.'
               # answer_four=''
                #pos_3=[0,-.25]
                #pos_4=[-2,-2]
            #elif act_testing.thisN==1:
             #   text_to_show='If a ticket officer is lenient'
              #  correct_mat='b'
               # answer_one='A) It means that I will always make it on irrespective of my press'
                #answer_two='B) it means that I will get on as wide as I am fairly accurate'
                #answer_three='C) It means that I will always make it on as wide as I press the spacebar'
                #pos_3=[0,-.25]
                #pos_4=[-2,-2]
      End JS Routine:
        if ((before_task === true)) {
            if ((quiz_set === 1)) {
                if ((round1.thisN === 0)) {
                    if ((quiz_answer.keys === "a")) {
                        cor_first += 1;
                        psychoJS.experiment.addData("quiz_1", 1);
                    } else {
                        cor_first = 0;
                        psychoJS.experiment.addData("quiz_1", 0);
                        num_wrong += 1;
                    }
                } else {
                    if ((round1.thisN === 1)) {
                        if ((quiz_answer.keys === "b")) {
                            cor_first += 1;
                            psychoJS.experiment.addData("quiz_1", 1);
                        } else {
                            cor_first = 0;
                            psychoJS.experiment.addData("quiz_1", 0);
                            num_wrong += 1;
                        }
                    } else {
                        if ((round1.thisN === 2)) {
                            if ((quiz_answer.keys === "b")) {
                                cor_first += 1;
                                psychoJS.experiment.addData("quiz_1", 1);
                            } else {
                                cor_first = 0;
                                num_wrong += 1;
                                psychoJS.experiment.addData("quiz_1", 0);
                                console.log(("num wrong" + num_wrong.toString()));
                            }
                        } else {
                            if ((round1.thisN === 3)) {
                                if ((cor_first >= 3)) {
                                    quiz_set += 1;
                                    loop1.finished = true;
                                    cor_first = 0;
                                } else {
                                    slide_review = 1;
                                    times_quiz_wrong += 1;
                                    review_first.thisN = 0;
                                    set_of_instructions = 1;
                                    cor_first = 0;
                                    if ((loop1.thisN > 2)) {
                                        psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                    }
                                    continueRoutine = false;
                                }
                            }
                        }
                    }
                }
            } else {
                if ((quiz_set === 2)) {
                    console.log(("quiz set os" + quiz_set.toString()));
                    if ((round2.thisN === 0)) {
                        if ((quiz_answer.keys === "a")) {
                            cor_first += 1;
                            psychoJS.experiment.addData("quiz_2", 1);
                        } else {
                            psychoJS.experiment.addData("quiz_2", 0);
                            cor_first = 0;
                            num_wrong += 1;
                        }
                    } else {
                        if ((round2.thisN === 1)) {
                            if ((quiz_answer.keys === "b")) {
                                cor_first += 1;
                                psychoJS.experiment.addData("quiz_2", 1);
                            } else {
                                cor_first = 0;
                                psychoJS.experiment.addData("quiz_2", 0);
                                num_wrong += 1;
                            }
                        } else {
                            if ((round2.thisN === 2)) {
                                if ((cor_first >= 2)) {
                                    loop2.finished = true;
                                    quiz_set += 1;
                                    cor_first = 0;
                                    continueRoutine = false;
                                } else {
                                    slide_review = 4;
                                    times_quiz_wrong += 1;
                                    set_of_instructions = 2;
                                    if ((loop2.thisN > 2)) {
                                        psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                    }
                                    cor_first = 0;
                                }
                            }
                        }
                    }
                } else {
                    if ((quiz_set === 3)) {
                        if ((round3.thisN === 0)) {
                            if ((quiz_answer.keys === "a")) {
                                cor_first += 1;
                                psychoJS.experiment.addData("quiz_3", 1);
                            } else {
                                cor_first = 0;
                                psychoJS.experiment.addData("quiz_3", 0);
                                num_wrong += 1;
                            }
                        } else {
                            if ((round3.thisN === 1)) {
                                if ((quiz_answer.keys === "a")) {
                                    cor_first += 1;
                                    psychoJS.experiment.addData("quiz_3", 1);
                                } else {
                                    cor_first = 0;
                                    psychoJS.experiment.addData("quiz_3", 0);
                                    num_wrong += 1;
                                }
                            } else {
                                if ((round3.thisN === 2)) {
                                    if ((quiz_answer.keys === "b")) {
                                        cor_first += 1;
                                        psychoJS.experiment.addData("quiz_3", 1);
                                    } else {
                                        cor_first = 0;
                                        num_wrong += 1;
                                        psychoJS.experiment.addData("quiz_3", 0);
                                    }
                                } else {
                                    if ((round3.thisN === 3)) {
                                        if ((cor_first >= 2)) {
                                            loop3.finished = true;
                                            cor_first = 0;
                                            quiz_set += 1;
                                            console.log("quiz set");
                                            continueRoutine = false;
                                        } else {
                                            slide_review = 7;
                                            set_of_instructions = 3;
                                            times_quiz_wrong += 1;
                                            cor_first = 0;
                                            if ((loop3.thisN > 2)) {
                                                psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                            }
                                            continueRoutine = false;
                                        }
                                    }
                                }
                            }
                        }
                    } else {
                        if ((quiz_set === 4)) {
                            miss_sometimes = true;
                            if ((round4.thisN === 0)) {
                                if ((quiz_answer.keys === "b")) {
                                    cor_first += 1;
                                    psychoJS.experiment.addData("quiz_4", 1);
                                } else {
                                    cor_first = 0;
                                    num_wrong += 1;
                                    psychoJS.experiment.addData("quiz_4", 0);
                                }
                            } else {
                                if ((round4.thisN === 1)) {
                                    if ((quiz_answer.keys === "a")) {
                                        cor_first += 1;
                                        psychoJS.experiment.addData("quiz_4", 1);
                                    } else {
                                        cor_first = 0;
                                        num_wrong += 1;
                                        psychoJS.experiment.addData("quiz_4", 0);
                                    }
                                } else {
                                    if ((round4.thisN === 2)) {
                                        if ((quiz_answer.keys === "b")) {
                                            cor_first += 1;
                                            psychoJS.experiment.addData("quiz_4", 1);
                                        } else {
                                            cor_first = 0;
                                            num_wrong += 1;
                                            psychoJS.experiment.addData("quiz_4", 0);
                                        }
                                    } else {
                                        if ((round4.thisN === 3)) {
                                            if ((cor_first >= 3)) {
                                                loop4.finished = true;
                                                quiz_set += 1;
                                                cor_first = 0;
                                                times_quiz_wrong += 1;
                                                continueRoutine = false;
                                            } else {
                                                slide_review = 12;
                                                cor_first = 0;
                                                set_of_instructions = 4;
                                                if ((loop4.thisN > 2)) {
                                                    psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                                }
                                            }
                                            miss_sometimes = true;
                                        }
                                    }
                                }
                            }
                        } else {
                            if ((quiz_set === 5)) {
                                if ((round5.thisN === 0)) {
                                    if ((quiz_answer.keys === "a")) {
                                        cor_first += 1;
                                        psychoJS.experiment.addData("quiz_5", 1);
                                    } else {
                                        cor_first = 0;
                                        num_wrong += 1;
                                        psychoJS.experiment.addData("quiz_5", 0);
                                    }
                                } else {
                                    if ((round5.thisN === 1)) {
                                        if ((quiz_answer.keys === "a")) {
                                            cor_first += 1;
                                            psychoJS.experiment.addData("quiz_5", 1);
                                        } else {
                                            cor_first = 0;
                                            psychoJS.experiment.addData("quiz_5", 0);
                                            num_wrong += 1;
                                        }
                                    } else {
                                        if ((round5.thisN === 2)) {
                                            if ((cor_first >= 2)) {
                                                loop5.finished = true;
                                                quiz_set += 1;
                                                cor_first = 0;
                                                continueRoutine = false;
                                            } else {
                                                slide_review = 18;
                                                times_quiz_wrong += 1;
                                                set_of_instructions -= 1;
                                                cor_first = 0;
                                                if ((loop5.thisN > 2)) {
                                                    psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                                }
                                            }
                                        }
                                    }
                                }
                            } else {
                                if ((quiz_set === 6)) {
                                    if ((round6.thisN === 0)) {
                                        if ((quiz_answer.keys === "b")) {
                                            cor_first += 1;
                                            psychoJS.experiment.addData("quiz_6", 1);
                                        } else {
                                            cor_first = 0;
                                            num_wrong += 1;
                                            psychoJS.experiment.addData("quiz_6", 0);
                                        }
                                    } else {
                                        if ((round6.thisN === 1)) {
                                            if ((quiz_answer.keys === "a")) {
                                                cor_first += 1;
                                                psychoJS.experiment.addData("quiz_6", 1);
                                            } else {
                                                cor_first = 0;
                                                num_wrong += 1;
                                                psychoJS.experiment.addData("quiz_6", 0);
                                            }
                                        } else {
                                            if ((round6.thisN === 2)) {
                                                if ((cor_first >= 2)) {
                                                    loop6.finished = true;
                                                    quiz_set += 1;
                                                    continueRoutine = false;
                                                    cor_first = 0;
                                                } else {
                                                    slide_review = 23;
                                                    times_quiz_wrong += 1;
                                                    set_of_instructions -= 1;
                                                    cor_first = 0;
                                                    if ((loop6.thisN > 2)) {
                                                        psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                                    }
                                                }
                                            }
                                        }
                                    }
                                } else {
                                    if ((quiz_set === 7)) {
                                        if ((round7.thisN === 0)) {
                                            if ((quiz_answer.keys === "a")) {
                                                cor_first += 1;
                                                psychoJS.experiment.addData("quiz_7", 1);
                                            } else {
                                                cor_first = 0;
                                                num_wrong += 1;
                                                psychoJS.experiment.addData("quiz_7", 0);
                                            }
                                        } else {
                                            if ((round7.thisN === 1)) {
                                                if ((quiz_answer.keys === "b")) {
                                                    cor_first += 1;
                                                    psychoJS.experiment.addData("quiz_7", 1);
                                                } else {
                                                    cor_first = 0;
                                                    num_wrong += 1;
                                                    psychoJS.experiment.addData("quiz_7", 0);
                                                }
                                            } else {
                                                if ((round7.thisN === 2)) {
                                                    if ((quiz_answer.keys === "a")) {
                                                        cor_first += 1;
                                                        psychoJS.experiment.addData("quiz_7", 1);
                                                    } else {
                                                        cor_first = 0;
                                                        psychoJS.experiment.addData("quiz_7", 1);
                                                        num_wrong += 1;
                                                    }
                                                } else {
                                                    if ((round7.thisN === 3)) {
                                                        if ((cor_first >= 3)) {
                                                            loop7.finished = true;
                                                            cor_first = 0;
                                                            round7.finished = true;
                                                            before_task = false;
                                                            continueRoutine = false;
                                                        } else {
                                                            slide_review = 29;
                                                            cor_first = 0;
                                                            times_quiz_wrong += 1;
                                                            set_of_instructions -= 1;
                                                            if ((loop7.thisN > 3)) {
                                                                psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                                                            }
                                                        }
                                                    }
                                                }
                                            }
                                        }
                                    }
                                }
                            }
                        }
                    }
                }
            }
        } else {
            if ((in_task === true)) {
                if ((quiz_answer.keys === "a")) {
                    corr_total += 1;
                    psychoJS.experiment.addData("quiz_8", 1);
                } else {
                    corr_total = 0;
                    num_wrong += 1;
                    psychoJS.experiment.addData("quiz_8", 0);
                }
                if ((corr_total >= 3)) {
                    review_loop_1.finished = true;
                    relearn_rules.finished = true;
                    act_testing.finished = true;
                } else {
                    slide_review = 39;
                    if ((relearn_rules.thisN > 3)) {
                        psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
                    }
                }
            }
        }
        psychoJS.experiment.addData("num_wrong", num_wrong);
        console.log(("num_wrong" + num_wrong.toString()));
      End Routine:
        if before_task==True:
            if quiz_set==1:
                if round1.thisN==0:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_1", 1)

                    else:
                        cor_first=0
                        thisExp.addData("quiz_1", 0)

                        num_wrong+=1


                elif round1.thisN==1:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_1", 1)
                    else:
                        cor_first=0
                        thisExp.addData("quiz_1", 0)
                        num_wrong+=1
                elif round1.thisN==2:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_1", 1)

                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_1", 0)

                        print('num wrong'+str(num_wrong))
                elif round1.thisN==3:
                    if cor_first>=3:
                        quiz_set+=1

                        loop1.finished=True

                        cor_first=0

                    else:
                        slide_review=1
                        times_quiz_wrong+=1
                        review_first.thisN=0
                        set_of_instructions =1
                        cor_first=0
                        if round1.thisN>2:
                            core.quit()
                        continueRoutine=False


            elif quiz_set==2:
                print('quiz set os'+ str(quiz_set))
                if round2.thisN==0:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_2", 1)
                    else:
                        thisExp.addData("quiz_2", 0)

                        cor_first=0
                        num_wrong+=1
                elif round2.thisN==1:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_2", 1)

                    else:
                        cor_first=0
                        thisExp.addData("quiz_2", 0)

                        num_wrong+=1
                elif round2.thisN==2:
                    if cor_first>=2:
                        loop2.finished=True
                        quiz_set+=1
                        cor_first=0
                        continueRoutine=False
                    else:
                        slide_review=4
                        times_quiz_wrong+=1
                        set_of_instructions=2
                        if round2.thisN>2:
                            core.quit()

                        cor_first=0
            elif quiz_set==3:
                if round3.thisN==0:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_3", 1)

                    else:
                        cor_first=0
                        thisExp.addData("quiz_3", 0)

                        num_wrong+=1
                elif round3.thisN==1:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_3", 1)

                    else:
                        cor_first=0
                        thisExp.addData("quiz_3", 0)

                        num_wrong+=1
                elif round3.thisN==2:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_3", 1)

                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_3", 0)
                elif round3.thisN==3:
                    if cor_first>=2:
                        loop3.finished=True


                        cor_first=0
                        quiz_set+=1
                        print('quiz set')
                        continueRoutine=False

                    else:
                        slide_review=7
                        set_of_instructions=3
                        times_quiz_wrong+=1
                        cor_first=0
                        if round3.thisN>3:
                            core.quit()
                        continueRoutine=false
            elif quiz_set==4:
                miss_sometimes=True
                if round4.thisN==0:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_4", 1)

                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_4", 0)

                elif round4.thisN==1:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_4", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_4", 0)
                elif round4.thisN==2:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_4", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_4", 0)
                elif round4.thisN==3:
                    if cor_first>=3:
                        loop4.finished=True
                        quiz_set+=1
                        cor_first=0
                        times_quiz_wrong+=1
                        continueRoutine=False

                    else:
                        slide_review=12
                        cor_first=0
                        set_of_instructions=4
                        if round4.thisN>3:
                            core.quit()

                    miss_sometimes=True
            elif quiz_set==5:
                if round5.thisN==0:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_5", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_5", 0)
                elif round5.thisN==1:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_5", 1)
                    else:
                        cor_first=0
                        thisExp.addData("quiz_5", 0)

                        num_wrong+=1
                elif round5.thisN==2:
                    if cor_first>=2:
                        loop5.finished=True
                        quiz_set+=1
                        cor_first=0
                        continueRoutine=False

                    else:
                        slide_review=18

                        times_quiz_wrong+=1
                        set_of_instructions-=1

                        cor_first=0
                        if round5.thisN>3:
                            core.quit()
            elif quiz_set==6:
                if round6.thisN==0:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_6", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_6", 0)

                elif round6.thisN==1:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_6", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_6", 0)

                elif round6.thisN==2:
                    if cor_first>=2:
                        loop6.finished=True
                        quiz_set+=1
                        continueRoutine=False
                        cor_first=0
                    else:
                        slide_review=23
                        times_quiz_wrong+=1
                        set_of_instructions-=1

                        cor_first=0
                        if round6.thisN>3:
                            core.quit()

            elif quiz_set==7:
                if round7.thisN==0:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_7", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_7", 0)

                elif round7.thisN==1:
                    if quiz_answer.keys=='b':
                        cor_first+=1
                        thisExp.addData("quiz_7", 1)
                    else:
                        cor_first=0
                        num_wrong+=1
                        thisExp.addData("quiz_7", 0)
                elif round7.thisN==2:
                    if quiz_answer.keys=='a':
                        cor_first+=1
                        thisExp.addData("quiz_7", 1)
                    else:
                        cor_first=0
                        thisExp.addData("quiz_7", 1)
                        num_wrong+=1
                elif round7.thisN==3:
                    if cor_first>=3:
                        loop7.finished=True
                        cor_first=0
                        round7.finished=True
                        before_task=False
                        continueRoutine=False

                    else:
                        slide_review=29
                        cor_first=0
                        times_quiz_wrong+=1
                        set_of_instructions-=1
                        if round7.thisN>3:
                            core.quit()


        elif in_task==True:
             if quiz_answer.keys=='a':
                corr_total+=1
                thisExp.addData("quiz_8", 1)
             else:
                corr_total=0
                num_wrong+=1
                thisExp.addData("quiz_8", 0)
             if corr_total>=3:
                review_loop_1.finished=True
                relearn_rules.finished=True
                act_testing.finished=True

             else:
                slide_review=40
                if relearn_rules.thisN>3:
                    core.quit()


        thisExp.addData("num_wrong", num_wrong)



        #if act_testing.thisN==0:
         #   corr_total=[0]
          #  if test_action_answer.keys=='a':

           #     test_action_answer.corr=1

            #    corr_total.append(1)


            #else:

             #   test_action_answer.corr=0
              #  corr_total=[0]


        #elif act_testing.thisN==1:

         #      if test_action_answer.keys=='b':

          #      test_action_answer.corr=1

           #     corr_total.append(1)

            #   else:

             #   test_action_answer.corr=0
              #  corr_total=[0]
    TextComponent test_q
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.075
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_to_show
      units = norm
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    KeyboardComponent quiz_answer
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent warnin
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $texts
      units = norm
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  Routine make_fake_choice
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    CodeComponent code_23
      Code Type = Both
      Begin JS Routine:
        if ((last_beg === 0)) {
            beg_island = island_b0;
            last_beg = 1;
        } else {
            beg_island = island_b1;
            last_beg = 0;
        }
        shuffle(islands);
        shuffle(transport);
        end_island = islands[0];
      Begin Routine:
        # we set the w_env

        w_env=1

        # we need to go from place to place now
        start_stop=random.sample([0,1,2],2)

        beg_island=islands[start_stop[0]]
        left_plane=transport[start_stop[0]]
        right_plane=transport[start_stop[1]]
        end_island=islands[start_stop[1]]

        letter_height=.075
        opt_answer=0

        #where to put computer opt in and self opt in
    ImageComponent dep_island_6
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent explain_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Let's see an example of what it looks like to walk!

        Press space to see where you walk to.
  Routine show_fake_choice
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    CodeComponent show_plane_selected_3
      Code Type = Auto->JS
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      Begin Routine:
        #means subject opted into choice

        show_back=1000
        start_time=0
    ImageComponent walking_2
      image = planes/walking.png
      pos = (0, .1)
      size = (0.24, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent dep_island_7
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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  Routine feeedbackss
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    CodeComponent give_feedback_4
      Code Type = Auto->JS
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      Begin Routine:
             # set up timings
        dep_time=2.5
            #what about the origin image
        dep_time_first=2.5


        dplace=state_transitions[beg_island]
        # which plane do we want to show
    ImageComponent departure_state_3
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      units = norm
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    ImageComponent final_state_3
      image [set every repeat] = $dplace
      pos = (0, -.66)
      size = (0.33, 0.66)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      units = norm
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3
      text = Press space to continue 
      units = norm
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    KeyboardComponent next_trial_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent walking_3
      image = planes/walking.png
      pos = (0, .1)
      size = (0.24, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine make_choice_2
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    CodeComponent code_25
      Code Type = Both
      Begin Experiment:
        last_time=[]
        last_beg=0
      Begin JS Experiment:
        last_time=[];
        last_beg=0;
      Begin JS Routine:
        if ((cs === 0)) {
            continueRoutine=false;
        }



        shuffle(islands);
        shuffle(transport);
        end_island = islands[0];
        left_plane = transport[0];
        right_plane = transport[1];
      Begin Routine:
        # we set the w_env


        # we need to go from place to place now
        start_stop=random.sample([0,1,2],2)

        # decide if left or right island will be correct

        beg_island=islands[start_stop[0]]

        end_island=islands[start_stop[1]]

        # make sure correct answer is available
        one_cor=0
        while one_cor==0:
            start_stop=random.sample([0,1],2)
            left_plane=transport[start_stop[0]]
            right_plane=transport[start_stop[1]]
            end_island=islands[start_stop[1]]

            if action_transitions[left_plane]==end_island or action_transitions[right_plane]==end_island:
                if end_island != last_time:
                    one_cor=1
                    last_time=end_island
    TextComponent press1
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.1
      pos = (-.25, -.05)
      startVal [time (s)] = 0.0
      text = Press 1 
      units = norm
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    ImageComponent left_choice_5
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $left_plane
      pos = (-.25, .25)
      size = (.24,.48)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent right_choice_5
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $right_plane
      pos = (.25, .25)
      size = (.24, .48)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent destination_island_5
      image [set every repeat] = $end_island
      pos = (0, -.66)
      size = (0.3, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_8
      allowedKeys [set every repeat] = 1,'1','9',9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent dep_island_23
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextComponent press9_2
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.1
      pos = (.25, -.05)
      startVal [time (s)] = 0.0
      text = Press 9
      units = norm
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  Routine show_choice_2
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    CodeComponent show_plane_selected_2
      Code Type = Auto->JS
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      Begin Routine:
        #means subject opted into choice
        show_back=0
        #when do we show plane selected
        start_time=0
        if cs==0:
            walking_choice=1
            var_time_left=0
            var_time_right=0

        else:
            walking_choice=0
            if key_resp_8.keys=='1':
                plane_selected=left_plane
                var_time_left=1
                var_time_right=0
            else:
                plane_selected=right_plane
                var_time_left=0
                var_time_right=1
    ImageComponent right_choice_6
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $right_plane
      pos = (.25, .25)
      size = (.24, .48)
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $var_time_right
      units = norm
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    ImageComponent walking_4
      image = planes/walking.png
      pos = (0, .1)
      size = (0.24, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $walking_choice
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    ImageComponent dep_island_24
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    ImageComponent final_state_supposed_to_3
      image [set every repeat] = $end_island
      pos = (-.5, -.66)
      size = (0.15, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent inteded_location_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, -.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Treasure Location
      units = norm
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    ImageComponent left_choice_6
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $left_plane
      pos = (-.25, .25)
      size = (.24, .48)
      startVal [time (s)] = $start_time
      stopVal [duration (s)] = $var_time_left
      units = norm
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  Routine opt_in_choice_2
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    CodeComponent deterine_type_2
      Code Type = Auto->JS
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      Begin Routine:
        text_2.alignHoriz="left"
        if miss_sometimes==False:
            instr_text='You decide how you want to travel\n\n\nBuy a ticket (Press Y)\nI rather walk (Press N)'
        else:
            instr_text='This time your ride will not always stop for you!\n\n\nBuy a ticket (Press Y)'
    CodeComponent code_32
      Code Type = Both
      Begin JS Routine:
        start_stop=randomsample([0,1],2)
        r=randint(0,2);

        beg_island = islands_start[r];

        left_plane = transport[start_stop[0]];
        right_plane = transport[start_stop[1]];
        if ((beg_island=='islands/hut.png')) {
            end_island = 'islands/town.png';
            } else {
                end_island ='islands/mountain.png';
            }
      Begin Routine:
        # we need to go from place to place now
        import random

        if blocks_mixed.thisRepN ==1:
            current_condition_mostly_as = list_as
            col = [0.1216, 0.4745, 0.1216]

        elif  blocks_mixed.thisRepN ==0:
            current_condition_mostly_as = list_ss
            col = [-0.2549, 0.2392, 0.2549]
        else:
            current_condition_mostly_as = list_ss_as
            col = [0.9216, 0.7412, 0.4039]

        start_stop=random.sample([0,1],2)

        beg_island=islands[start_stop[0]]
        left_plane=transport[start_stop[0]]
        right_plane=transport[start_stop[1]]
        end_island=islands[start_stop[1]]

        letter_height=.075
        opt_answer=0

        #where to put computer opt in and self opt in
        #if current_condition_mostly_as[mostly_as.thisRepN] != 1:
         #   condition_text = "SAS"
        #else:
           # condition_text = "AS"
    ImageComponent dep_island_22
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    KeyboardComponent key_resp_15
      allowedKeys = 'y','n','1','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent record_optin_2
      Code Type = Auto->JS
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      End Routine:
        if key_resp_15.keys=='y':
            cs=1
            action_or_not=0
        elif key_resp_15.keys=='n':
            cs=0
            action_or_not=3


        #left_plane=transport[start_stop[0]]
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_text
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  Routine feeedback__2
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    CodeComponent give_feedback_6
      Code Type = Both
      Begin JS Experiment:
        num_consecutive_correct = 0;
        miss_sometimes = false;
      Begin JS Routine:
        pos_d = [0, 0];
        if ((left_plane === plane_selected)) {
            pos_d = [-0.25, 0.25];
            left_arrow = 100;
            right_arrow = 0;
        } else {
            if ((right_plane === plane_selected)) {
                pos_d = [0.25, 0.25];
                left_arrow = 0;
                right_arrow = 100;
            }
        }
        miss_or=6;
        if ((miss_sometimes === true)) {
            miss_or=0;
            if ((cs === 1)) {
                lets_see = randint(0, 7);

                if ((lets_see > 2)) {
                    cs = 0;
                }
            }
        }
        if ((cs === 1)) {
            plane_to_show = plane_selected;
            only_if_acted = 7;
            walking_choice = 0;
            dplace = action_transitions[plane_selected];
        } else {
            plane_to_show = left_plane;
            dplace = state_transitions[beg_island];
            walking_choice = 7;
            only_if_acted = 0.0;
        }
        if ((dplace === end_island)) {
            num_consecutive_correct += 1;
        } else {
            num_consecutive_correct = 0;
        }
      Begin Routine:
        pos_c=[0,0]
             # set up timings
        if left_plane==plane_to_show:
            pos_c=[-.25,.25]
            left_arrow=100
            right_arrow=0
        elif right_plane==plane_to_show:
            pos_c=[.25,.25]
            left_arrow=0
            right_arrow=100
        if miss_sometimes==True:
            print("now you will miss sometimes")
            if cs==1:
                lets_see=random.randint(0,6)
                if let_see>2:
                    cs=0
            # he gets on his riden


        if cs==1:
            plane_to_show=plane_selected
            only_if_acted=7
            walking_choice=0

            dplace=action_transitions[plane_selected]

        else:
            plane_to_show=left_plane
            dplace=state_transitions[beg_island]

            print('dplace is '+str(dplace))
            walking_choice=7
            only_if_acted=0.0


        if dplace == end_island:
            num_consecutive_correct+=1
        else:
            # was it possible to give a correct answer
            num_consecutive_correct=0

        print('we do get past the code')
        print('end island'+str(end_island))
        print('plane_to_show'+str(plane_to_show))
        print('only ieeeed'+str(num_consecutive_correct))
    ImageComponent tran_selected_3
      color = 0.9216, 0.9216, 0.9216
      image [set every repeat] = $plane_to_show
      pos [set every repeat] = $pos_d
      size = (.24, .48)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $only_if_acted
      units = norm
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    TextComponent text_21
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
      text = Press space to continue 
      units = norm
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    KeyboardComponent next_trial_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
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    ImageComponent walking_6
      image = planes/walking.png
      pos = (0, .1)
      size = (0.24, 0.24)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $walking_choice
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    ImageComponent dep_island_26
      color = 0.0000, 0.0000, 0.0000
      image [set every repeat] = $beg_island
      pos = (0, .75)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = norm
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    ImageComponent final_state_4
      image [set every repeat] = $dplace
      pos = (0, -.66)
      size = (0.33, 0.66)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      units = norm
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    ImageComponent final_state_supposed_to_2
      image [set every repeat] = $end_island
      pos = (-.5, -.66)
      size = (0.15, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      units = norm
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    TextComponent counter
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (.5,-.65)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $miss_or
      text [set every repeat] = $str(num_consecutive_correct) + " correct in a row"
      units = norm
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    CodeComponent code_14
      Code Type = JS
      End JS Routine:
        if ((miss_sometimes === false)){
            if ((see_actions.thisRepN > 15)) {
                psychoJS.quit({message: 'You have failed the attention check and therefore cannot proceed with the study'});
            }
        }
    CodeComponent determine_loop_end
      Code Type = Auto->JS
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      End Routine:
        if miss_sometimes==False:
            if num_consecutive_correct>=5:
                see_actions.finished=True;
    TextComponent inteded_location_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, -.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = Treasure Location
      units = norm
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  Routine new_examples
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        print('miss_sometimes'+str(miss_sometimes))
        if miss_sometimes==false:
            if see_actions.thisN==0:
                texts='In the next practice, you decide how to travel.\nIf you want to walk (by pressing "N"), or whether you want to travel by train/plane (Press "Y")\n\nTo move forward, you need to get to the treasure location 5 times in a row.\n\nPress space to continue.'
            else:
                continueRoutine=false
        else:
            if miss_ride_sometimes.thisN==0:
                texts='In the next practice, you decide if you want to walk (by pressing "N"), or whether you want to travel by train/plane (Press "Y")\n\nPress space to continue.'
            else:
                continueRoutine=false

        text_5.alignHoriz="left"
    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $texts
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine let_the_game_begin
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    CodeComponent code_47
      Code Type = Both
      Begin JS Routine:
        console.log(("total_wrong" + num_wrong.toString()));

        psychoJS.experiment.addData("total_num_wrong", num_wrong);
        if ((num_wrong > 7)) {
            psychoJS.quit({message: 'Sorry you failed too many quizz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});
            psychoJS.experiment.addData("failed_test", 1);


        }
    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        To put it all together, we will now do some practice blocks.

        Press space when you are ready to begin!
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine practice_in_task
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    CodeComponent only_practice
      Code Type = Auto->JS
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      Begin Routine:
        if block.thisN>5:
            practice_task.finished=True
            continueRoutine=false
    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Experiment:
        start_with=53
      Begin Routine:
        print('current_slide '+str(start_with))

        if c_elastic==.9:
            if practice_task.thisN==0:
                start_with=49
            if key_resp_first.keys=="right" and start_with<52:
                start_with +=1
            elif key_resp_first.keys=="left" and start_with>50:
                start_with -=1

        if c_inelastic==.9:
            if practice_task.thisN==0:
                start_with=53
            if key_resp_first.keys=="right" and start_with<56:
                start_with +=1
            elif key_resp_first.keys=="left" and start_with>53:
                start_with -=1

        if c_inelastic<.3 and c_elastic<.3:
            if practice_task.thisN==0:
                start_with=56
            if key_resp_first.keys=="right" and start_with<59:
                start_with +=1
            elif key_resp_first.keys=="left" and start_with>57:
                start_with -=1
      End Routine:
        if c_elastic==.9:
            if start_with == 52 and key_resp_first.keys=="right":
                practice_task.finished=True
                continueRoutine=false
        if c_inelastic==.9:
            if start_with == 56 and key_resp_first.keys=="right":
                practice_task.finished=True
                continueRoutine=false
        if c_inelastic<.3 and c_elastic<.3:
            if start_with == 59 and key_resp_first.keys=="right":
                practice_task.finished=True
                continueRoutine=false
    ImageComponent image_7
      color = -1.0000, -1.0000, -1.0000
      image [set every repeat] = $'instr_new_draft/Slide' + str(start_with) + '.jpeg'
      size = (1.69, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_first
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine check_action_understanding
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    CodeComponent code_16
      Code Type = Both
      Begin JS Routine:
        if ((block.thisN > 5)) {
            practice_quiz.finished = true;
            repeat_quiz.finished = true;
            continueRoutine = false;
        }
        answer_2.alignHoriz = "left";
        if ((practice_quiz.thisN === 0)) {
            text_to_show = "In the next planet, ON AVERAGE, your ride will stop for you";
            correct_mat = "C";
            show_which = 3;
            times_which = 35;
            answer_one = "A) Frequently\n\n B) Sometimes\n\n C) Rarely";
        } else {
            if ((practice_quiz.thisN === 1)) {
                text_to_show = "In the next planet, ON AVERAGE, how frequently does your jump from the PUBLIC PLATFORM succeed?";
                correct_mat = "A";
                times_which = 35;
                answer_one = "A) Frequently\n\n B) Sometimes\n\n C) Rarely";
                show_which = 1;
            } else {
                if ((practice_quiz.thisN === 2)) {
                    text_to_show = "In the next planet, ON AVERAGE, how frequently does your jump from the LOADING STATION succeed?";
                    correct_mat = "A";
                    times_which = 35;
                    answer_one = "A) Frequently\n\n B) Sometimes\n\n C) Rarely";
                    show_which = 2;
                } else {
                    times_which = 0;
                    if ((corr_total >= 3)) {
                        text_to_show = "Nice job. lets proceed to the practice planet\n\n Press space to continue";
                        answer_one = "";
                        show_which = 1;
                    } else {
                        text_to_show = "Seems like something was not clear. Lets do another review\n\nPress space to continue";
                        answer_one = "";
                    }
                }
            }
        }
      Begin Routine:
        if block.thisN>5:
            practice_quiz.finished=True
            repeat_quiz.finished=True
            continueRoutine=false

        answer_2.alignHoriz = 'left'
        if practice_quiz.thisN==0:
            text_to_show='In the next planet, ON AVERAGE, your ride will stop for you'
            correct_mat='C'
            show_which=3
            times_which=35
            answer_one='A) Frequently\n\n B) Sometimes\n\n C) Rarely'
        elif practice_quiz.thisN==1:
            text_to_show='In the next planet, ON AVERAGE, how frequently does your jump from the PUBLIC PLATFORM succeed?'
            correct_mat='A'
            times_which=35
            answer_one='A) Frequently\n\n B) Sometimes\n\n C) Rarely'
            show_which=1
        elif practice_quiz.thisN==2:
            text_to_show='In the next planet, ON AVERAGE, how frequently does your jump from the LOADING STATION succeed?'
            correct_mat='A'
            times_which=35
            answer_one='A) Frequently\n\n B) Sometimes\n\n C) Rarely'
            show_which=2
        else:
            times_which=0
            if corr_total>=3:
                text_to_show='Nice job. lets proceed to the practice planet\n\n Press space to continue'
                answer_one=''

                show_which=1
            else:
                text_to_show='Seems like something was not clear. Lets do another review\n\nPress space to continue'
                answer_one=''
      End JS Routine:
        if ((c_elastic === 0.9)) {
            if ((practice_quiz.thisN === 0)) {
                if ((test_action_answer.keys === "c")) {
                    corr_total += 1;
                } else {
                    corr_total = 0;
                }
            } else {
                if ((practice_quiz.thisN === 1)) {
                    if ((test_action_answer.keys === "c")) {
                        corr_total += 1;
                    } else {
                        corr_total = 0;
                    }
                } else {
                    if ((practice_quiz.thisN === 2)) {
                        if ((test_action_answer.keys === "a")) {
                            corr_total += 1;
                        } else {
                            corr_total = 0;
                        }
                    } else {
                        if ((practice_quiz.thisN === 3)) {
                            if ((corr_total >= 3)) {
                                repeat_quiz.finished = true;
                                console.log("it works");
                            } else {
                                start_with = 48;
                                corr_total = 0;
                            }
                        }
                    }
                }
            }
        }
        if ((c_inelastic === 0.9)) {
            if ((practice_quiz.thisN === 0)) {
                if ((test_action_answer.keys === "a")) {
                    corr_total += 1;
                } else {
                    corr_total = 0;
                }
            } else {
                if ((practice_quiz.thisN === 1)) {
                    if ((test_action_answer.keys === "c")) {
                        corr_total += 1;
                    } else {
                        corr_total = 0;
                    }
                } else {
                    if ((practice_quiz.thisN === 2)) {
                        if ((test_action_answer.keys === "c")) {
                            corr_total += 1;
                        } else {
                            corr_total = 0;
                        }
                    } else {
                        if ((practice_quiz.thisN === 3)) {
                            if ((corr_total >= 3)) {
                                repeat_quiz.finished = true;
                                console.log("it works");
                                corr_total = 0;
                            } else {
                                corr_total = 0;
                                start_with = 52;
                            }
                        }
                    }
                }
            }
        }
        if (((c_inelastic < 0.3) && (c_elastic < 0.3))) {
            if ((practice_quiz.thisN === 0)) {
                if ((test_action_answer.keys === "c")) {
                    corr_total += 1;
                } else {
                    corr_total = 0;
                }
            } else {
                if ((practice_quiz.thisN === 1)) {
                    if ((test_action_answer.keys === "c")) {
                        corr_total += 1;
                    } else {
                        corr_total = 0;
                    }
                } else {
                    if ((practice_quiz.thisN === 2)) {
                        if ((test_action_answer.keys === "c")) {
                            corr_total += 1;
                        } else {
                            corr_total = 0;
                        }
                    } else {
                        if ((practice_quiz.thisN === 3)) {
                            if ((corr_total >= 3)) {
                                repeat_quiz.finished = true;
                                console.log("it works");
                            } else {
                                corr_total = 0;
                                start_with = 54;
                                if ((repeat_quiz.thisN > 2)) {
                                    psychoJS.quit({message: 'Sorry you failed too many quiz questions. You cannot continue this study. Please return it since you will not be paid for your continued time'});

                                }
                            }
                        }
                    }
                }
            }
        }
      End Routine:
        if c_elastic==.9:
            if practice_quiz.thisN==0:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0
            elif practice_quiz.thisN==1:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0

            elif practice_quiz.thisN==2:
                if test_action_answer.keys=='a':
                    corr_total+=1
                else:
                    corr_total=0
            elif practice_quiz.thisN==3:
                if corr_total>=3:
                    repeat_quiz.finished=True
                    print('it works')
                else:
                     start_with=50
                     corr_total=0


        if c_inelastic==.9:
            if practice_quiz.thisN==0:
                if test_action_answer.keys=='a':
                    corr_total+=1
                else:
                    corr_total=0
            elif practice_quiz.thisN==1:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0

            elif practice_quiz.thisN==2:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0
            elif practice_quiz.thisN==3:
                if corr_total>=3:
                    repeat_quiz.finished=True
                    print('it works')
                    corr_total=0
                else:
                    corr_total=0
                    start_with=54

        if c_inelastic<.3 and c_elastic<.3:
            if practice_quiz.thisN==0:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0
            elif practice_quiz.thisN==1:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0

            elif practice_quiz.thisN==2:
                if test_action_answer.keys=='c':
                    corr_total+=1
                else:
                    corr_total=0
            elif practice_quiz.thisN==3:
                if corr_total>=3:
                    repeat_quiz.finished=True
                else:
                    corr_total=0
                    start_with=54
                    if repeat_quiz.thisN>2:
                        core.quit()
    TextComponent test_q_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_to_show
      units = norm
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    KeyboardComponent test_action_answer
      allowedKeys = 'a','b','c','d','space'
      correctAns = $correct_mat
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent new_platform_5
      image [set every repeat] = $'distinguiish_actions/Slide' + str(show_which) + '.jpeg'
      pos = (0, -.6)
      size = (0.8, 0.464)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $times_which
      units = norm
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    TextComponent answer_2
      color = -1.0000, -1.0000, -1.0000
      font = open sans
      letterHeight = 0.075
      pos = (-.5, .15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $answer_one
      units = norm
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  Routine breather_2
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    CodeComponent code_18
      Code Type = Both
      Begin JS Experiment:
        function sigmoid(x) {
          return 1 / (1 + Math.exp(-x));
        }

        function logisticRegression(features, labels, iterations, learningRate) {
          features = features.map(feature => [1, feature]);

          let weights = Array(features[0].length).fill(0);

          for (let i = 0; i < iterations; i++) {
            const predictions = features.map(point => sigmoid(dotProduct(point, weights)));

            // calculate errors
            const errors = labels.map((label, index) => label - predictions[index]);

            // calculate gradients
            const gradients = features.map(
              (point, index) => point.map(value => value * errors[index])
            );

            // calculate mean gradients
            const meanGradients = gradients.reduce(
              (accumulator, currentValue) =>
                accumulator.map((value, index) => value + currentValue[index])
            ).map(value => value * (1 / features.length));

            // update weights
            weights = weights.map(
              (weight, index) => weight + learningRate * meanGradients[index]
            );
          }

          return weights;
        }

        // dot product function
        function dotProduct(a, b) {
          return a.reduce((accumulator, currentValue, currentIndex) =>
            accumulator + currentValue * b[currentIndex],
            0
          );
        }
      Begin JS Routine:
        last_message = "You are done with this planet.\n\nTake a breather. Press Space when you are ready to proceed to the next planet";
      Begin Routine:
        last_message='You are done with this planet.\n\nTake a breather. Press Space when you are ready to proceed to the next planet'
    TextComponent text_16
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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      text [set every repeat]:
        $last_message
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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  Routine excited
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    CodeComponent continue_or_not
      Code Type = Auto->JS
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      Begin Experiment:
        trials_last_query_e=0
        opt_out_won_e=0
        opt_out_lost_e=0
        opt_in_lost_high_e=0
        opt_in_lost_e=0

        opt_in_won_e=0
        trials_last_query_s=0
      Begin Routine:
        if block.thisN > 5:
            if cs==0 and total_reward==150 and trials_last_query_s>2:
                trials_last_query_s=0
                trials_last_query_e=0
                opt_out_won_e+=1
                continueRoutine=True

            elif cs==0 and total_reward==0 and opt_out_lost_e<6 and trials_last_query_e>3:
                opt_out_lost_e+=1
                trials_last_query_s+=1
                trials_last_query_e=0
                continueRoutine=True
            # these are the opt in and lose conditions
            elif cs==1 and trials_task.thisN > 10 and c_elastic+c_inelastic>.6 and num_actions==3 and opt_in_lost_high_e<4 and trials_last_query_e>3:
                opt_in_lost_high_e+=1
                trials_last_query_s+=1

                trials_last_query_e=0
                continueRoutine=True
            elif trials_task.thisN > 10 and c_inelastic>.6 and num_actions==1 and total_reward==0 and opt_in_lost_high_e<4 and trials_last_query_e>3:
                opt_in_lost_high_e+=1
                trials_last_query_s+=1

                trials_last_query_e=0
                continueRoutine=True
            elif cs==1 and total_reward==0 and opt_in_lost_e<4 and trials_last_query_e>3:
                opt_in_lost_e+=1
                trials_last_query_s+=1

                trials_last_query_e=0
                continueRoutine=True

            elif cs==1 and total_reward==150 and trials_task.thisN <10 and opt_in_won_e<6 and trials_last_query_e>3:
                opt_in_won_e+=1
                trials_last_query_s+=1

                trials_last_query_e=0
                continueRoutine=True
            elif cs==1 and total_reward==150 and trials_task.thisN >10 and opt_in_won_e<6 and c_elastic+c_inelastic<.4 and trials_last_query_e>3:
                opt_in_won_e+=1
                trials_last_query_e=0
                trials_last_query_s+=1

                continueRoutine=True
            else:
                trials_last_query_e+=1
                trials_last_query_s+=1

                continueRoutine=False

        else:
            trials_last_query_e+=1
            trials_last_query_s+=1

            continueRoutine=False

        excited_title.alignHoriz="left"
      End Routine:
        thisExp.addData("q_out_out_won", opt_out_won)
        thisExp.addData("q_opt_out_lost", opt_out_lost)
        thisExp.addData("q_opt_in_lost_high", opt_in_lost_high)
        thisExp.addData("q_opt_in_lost_regular", opt_in_lost)
        thisExp.addData("q_opt_in_won", opt_in_won)
    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        excited_query.alignHoriz="left"
    PolygonComponent polygon_18
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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    TextComponent excited_query
      color = -1.0000, -1.0000, -1.0000
      font = Open sans
      letterHeight = 0.08
      pos = (-.5, .46)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 25
      units = norm
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      text:
        Please indicate how you feel right now
        You can click anywhere on the line

        (your answer will be recorded wherever you click)
    TextComponent excited_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = .17
      pos = (-.5, .75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = How excited are you?
      units = norm
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    SliderComponent slider_excited
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0039, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('Extremely deflated', 'Extremely excited')
      letterHeight = 0.07
      pos = (0, -.3)
      size = (1.15, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 24
      styles = rating
      ticks = (1, 4)
      units = norm
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  Routine content
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    CodeComponent continue_or_not_2
      Code Type = Auto->JS
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      Begin Experiment:
        trials_last_query=0
        trials_last_query_t=0

        opt_out_won_=0
        opt_out_lost=0
        opt_in_lost_high=0
        opt_in_lost=0

        opt_in_won=0
      Begin Routine:
        if block.thisN > 5:
            if cs==0 and total_reward==150 and trials_last_query_t>2:
                trials_last_query=0
                trials_last_query_t=0
                opt_out_won+=1
                continueRoutine=True

            elif cs==0 and total_reward==0 and opt_out_lost<6 and trials_last_query>3:
                opt_out_lost+=1
                trials_last_query_t+=1
                trials_last_query=0
                continueRoutine=True
            # these are the opt in and lose conditions
            elif cs==1 and trials_task.thisN > 10 and c_elastic+c_inelastic>.6 and trials_last_query>3and num_actions==3 and opt_in_lost_high<4:
                opt_in_lost_high+=1
                trials_last_query_t+=1

                trials_last_query=0
                continueRoutine=True
            elif trials_task.thisN > 10 and c_inelastic>.6 and num_actions==1 and trials_last_query>3 and total_reward==0 and opt_in_lost_high<4:
                opt_in_lost_high+=1
                trials_last_query_t+=1

                trials_last_query=0
                continueRoutine=True
            elif cs==1 and total_reward==0 and opt_in_lost<4 and trials_last_query>3:
                opt_in_lost+=1
                trials_last_query_t+=1

                trials_last_query=0
                continueRoutine=True

            elif cs==1 and total_reward==150 and trials_last_query>3 and trials_task.thisN <15 and opt_in_won<6:
                opt_in_won+=1
                trials_last_query_t+=1

                trials_last_query=0
                continueRoutine=True
            elif cs==1 and total_reward==150 and trials_last_query>3 and trials_task.thisN >10 and opt_in_won<6 and c_elastic+c_inelastic<.4:
                opt_in_won+=1
                trials_last_query_t+=1

                trials_last_query=0
                continueRoutine=True
            else:
                trials_last_query+=1
                trials_last_query_t+=1

                continueRoutine=False

        else:
            trials_last_query+=1
            trials_last_query_t+=1

            continueRoutine=False
      End Routine:
        thisExp.addData("q_out_out_won", opt_out_won)
        thisExp.addData("q_opt_out_lost", opt_out_lost)
        thisExp.addData("q_opt_in_lost_high", opt_in_lost_high)
        thisExp.addData("q_opt_in_lost_regular", opt_in_lost)
        thisExp.addData("q_opt_in_won", opt_in_won)
    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Routine:

        content_query_2.alignHoriz="left"

        content_title.alignHoriz="left"
    PolygonComponent polygon_19
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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    TextComponent content_query_2
      color = -1.0000, -1.0000, -1.0000
      font = Open sans
      letterHeight = 0.08
      pos = (-.5, .52)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 25
      units = norm
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      text:
        Please indicate how you feel right now
        You can click anywhere on the line

        (your answer will be recorded wherever you click)
    TextComponent content_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = .17
      pos = (-.5, .75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = How frustrated are you?
      units = norm
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    SliderComponent slider_7
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0039, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      labels = ('Extremely content','Extremely frustrated')
      letterHeight = 0.07
      pos = (0, -0.35)
      size = (1.08, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 24
      styles = rating
      ticks = (1, 4)
      units = norm
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  Routine consent_form_1
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        consent.alignHoriz="left"

        test_1='INFORMED CONSENT\n\nWho is conducting this research study?\n\nThis research is being conducted by the Psychology and Cognitive Sciences Departments at the Hebrew University of Jerusalem. The lead researchers for this project are Levi Solomyak and Aviv Emanuel.\n\nWhat is the purpose of this study?\n\nWe are interested in understanding how individual differences in learning and decision making contribute to psychological traits. Particularly, in the current study, we focus on how people learn about the effect of their actions. This research aims to provide an insight into how healthy brain works, to help us better understand how aberrant learning might contribute to clinical presentation of specific psychological disorders.\n\n Who can participate in the study?\n\nOnly adults (age 18 and above) who are native or fluent in English are eligible to participate. Because the study has numerous psychological surveys to fill, it is important that English is a language that you are fluent in. \n\nPress Space to continue'

        print('part_id is'+str(part_id))





        c_inelastic=datasub[part_id*3-3]['c_inelastic'];
        c_elastic=datasub[part_id*3-3]['c_elastic'];
    TextComponent consent
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_1
      units = norm
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      color = 0.0824, -0.6627, 0.7725
      letterHeight = 0.05
      pos = (0, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $'c_inelastic' +str(c_inelastic)
      units = norm
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    TextComponent text_12
      color = -0.0039, 1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $'c elastic is' + str(c_elastic)
      units = norm
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  Routine consent_form_4
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    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Routine:
        text_22.alignHoriz="left"
    TextComponent text_22
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, 0)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What about my data?

        We collect behavioral and self-reported data in this study. The data will be anonymized, and your User ID will be replaced with a non-identifiable random ID number. Some of this data might be shared in publications, public data sets or scientific reports, again without any means of identification.

        Queries and complaints

        If you have any questions, concerns or complaints regarding this study please contact the researchers: Levi Solomyak and Aviv Emanuel - levi.solomyak@mail.huji.ac.il, aviv.emanuel@mail.huji.ac.il





        I certify that I have read the informed consent and received the information to contact the investigators if necessary.

         --- for yes press Y
         --- for no  press N

        I certify that I am a fluent in English.

         --- for yes press Y
         --- for no  press N
    KeyboardComponent key_resp_12
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_41
      Code Type = Both
      End JS Routine:
        if ((key_resp_12.keys === "y")) {
            consent_loop.finished = true;
        }
      End Routine:
        if key_resp_11.keys=='n':
            core.quit()
        else:
            consent_loop.finished=True
  Routine consent_5
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    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_11.keys=='n':
            text_consent='Are you sure you do not wish to participate in this study?\n\nIf so, as you do not wish to participate in this study, please return your submission on Prolific by selecting the "Stop without completing" button."\n\nPress n to confirm\nPress r to return to re-read the consent form'
        else:
            text_consent='Great! Then let us set off\n on an intergalactic adventure!\n\n Press r when you are ready'

        text_23.alignHoriz="left"
    CodeComponent code_43
      Code Type = Both
      End JS Routine:
        if ((key_resp_19.keys === "n")) {
            psychoJS.quit({message: 'As you do not wish to participate in this study, please return your submission on Prolific by selecting the "Stop without completing" button.'});
        }
    TextComponent text_23
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, 0)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        $text_consent
    KeyboardComponent key_resp_19
      allowedKeys = 'n','r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_form_2
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    CodeComponent code_44
      Code Type = Auto->JS
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      Begin Routine:
        text_24.alignHoriz="left"
    TextComponent text_24
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, 0)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What will happen to me if I take part?


        You will play an intergalactic game in which you will try to find treasures on various planets. You will learn what methods of transportation take you where, when to buy tickets, how to catch a moving train and how to avoid bandits from stealing your money. The game will take about an hour. You will be paid 10 dollars for completing the study, and you can earn up to an additional 5 dollars depending on your performance in the game. Credit for your participation will be provided by Prolific Academic.

        What are the possible disadvantages and risks of taking part?

        The game you will play does not pose any known risks or disadvantages. In the surveys, you will be asked to answer some questions about yourself. Please feel free to contact us in case of any distress as a result of this study (contact details are provided below). Note that you are not obligated to participate in this study, and you may terminate your participation at any point during the study.

        Press Space to continue
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_form_3
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    CodeComponent code_45
      Code Type = Auto->JS
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      Begin Routine:
        text_25.alignHoriz="left"
    TextComponent text_25
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-.5, 0)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        What are the possible benefits of taking part?

        While there are no immediate benefits to taking part, except from credit given for your participation, this research will help us understand better how differences in learning and decision making might contribute to clinical psychological disorders.


        What do I have to pay attention to while participating?


        The researcher reserves the right not to pay if it is clear that you have completed the task or surveys randomly, without paying attention, or with negligence. Paying attention and following the instructions will ensure that you will be paid the full amount. We use a variety of explicit and concealed measures to verify sincerity and a lack of negligence in task performance.

        Please refrain from doing other things (e.g. other experiments, other online or offline activities) until the end of the experiment.


        Please do not proceed with this study if you are not a fluent English speaker.

        Press Space to continue
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gamble_outcome
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    CodeComponent code_49
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_16.keys =='b' or key_resp_16.keys=='y':
            if trials_2.thisN==0:
                last_total=total_earned

                r=randint(0,100)
                if r<win_prob:
                      thisExp.addData("gambled_won", 1)

                      total_earned=total_earned+90

                     # texts='You win! Your new earnings are '+str(total_earned+90) +' coins.\nPress space to continue'
                else:
                      thisExp.addData("gambled_won", 0)

                      total_earned= total_earned-60
                   #   texts='You Lost. Your new earnings are '+str(total_earned-60) +' coins.\nPress space to continue'
                continueRoutine=False

            elif trials_2.thisN==1:
                r=randint(0,2)
                if r==1:
                    total_earned= total_earned+90
                    thisExp.addData("gambled_won", 1)
                 #   texts='You win! Your new earnings are '+str(total_earned+90) +' coins.\nPress space to continue'
                else:
                    total_earned= total_earned-60
                    thisExp.addData("gambled_won", 0)

                continueRoutine=False

                  #  texts='You Lost. Your new earnings are '+str(total_earned-60) +' coins.\nPress space to continue'
            elif trials_2.thisN==2:
                r=randint(0,10)
                if r>5:
                    total_earned=total_earned-90
                    thisExp.addData("gambled_won", 1)

                  #  texts='You win! Your new earnings are '+str(total_earned+90) +' coins.\nPress space to continue'
                else:
                    total_earned=total_earned-60
                    thisExp.addData("gambled_won", 0)

                continueRoutine=False

                   # texts='You Lost. Your new earnings are '+str(total_earned-60) +' coins.\nPress space to continue'

            elif trials_2.thisN==3:
                r=randint(0,100)
                if r>65:
                    total_earned+=90
                    thisExp.addData("gambled_won", 1)
                   # texts='You win! Your new earnings are '+str(total_earned+90) +' coins.\nPress space to continue'
                else:
                    total_earned-=60
                    thisExp.addData("gambled_won", 0)
                    #texts='You Lost. Your new earnings are '+str(total_earned-60) +' coins.\nPress space to continue'
                continueRoutine=False
            elif trials_2.thisN==4:
                r=randint(0,100)
                if r>70:
                    thisExp.addData("gambled_won", 1)
                    total_earned= total_earned+90
                   # texts='You win! Your new earnings are '+str(total_earned+90) +' coins.\nPress space to continue'
                else:
                    thisExp.addData("gambled_won", 0)
                    total_earned=total_earned-60
                    #texts='You Lost. Your new earnings are '+str(total_earned-60) +' coins.\nPress space to continue'
                continueRoutine=False
            elif trials_2.thisN==5:
                       # texts='You Lost. Your new earnings are '+str(total_earned-60) +' coins.\nPress space to continue'
                    texts='Your previous earnings were '+str(last_total) +'\nYour new earnings (after all gambles) is ' +str(total_earned) +'\n\nPress space to continue'
        else:
             print('we just always end up here')
             thisExp.addData("gambled_won", None)
             if trials_2.thisN==0:
                last_total=total_earned
                continueRoutine=false

             elif trials_2.thisN==5:
                texts='Your previous earnings were '+str(last_total) +'\nYour new earnings (after all gambles) is ' +str(total_earned) +'\n\nPress space to continue'
             else:
                continueRoutine=false
        print('total earned'+str(total_earned))
          #  texts='Ok you are still at '+str(total_earned) +' coins.\nPress space to continue'
      End Routine:
        thisExp.addData("total_earned", total_earned)
    TextComponent text_27
      color = -1.0000, -1.0000, 0.0902
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $texts
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine gamblingoutcome
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    CodeComponent code_48
      Code Type = Auto->JS
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      Begin Routine:
        if trials_2.thisN==0:
            continueRoutine=false



        print('response is: '+key_resp_16.keys)
        print('opt in is registed as '+str(key_resp_16.keys=='b'))
      Each Frame:
        if key_resp_16.keys=='b' or key_resp_16.keys=='y':
            continueRoutine=True

            tes='Determining outcome in!: '+ Math.round(3 - t,1) +'\n\n(outcomes revealed after all gambles)'
        else:
            continueRoutine=True
            tes='Generating next offer in: '+ Math.round(3 - t,1)
      End Routine:
        if key_resp_16.keys=='b' or key_resp_16.keys=='y':

            thisExp.addData("took_gamble", 1)
        elif key_resp_16.keys=='a' or key_resp_16.keys=='n':
           thisExp.addData("took_gamble", 0)

        else:
            thisExp.addData("took_gamble", 16)
    PolygonComponent background_color_3
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent traveling_one_2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every frame] = $tes
      units = norm
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    ImageComponent space_ship_2
      image [set every frame] = gamble.png
      pos = (0, -.5)
      size = (0.75, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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  Routine risk_choices_2
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    CodeComponent code_24
      Code Type = Both
      Begin JS Routine:
        function sigmoid(x) {
          return 1 / (1 + Math.exp(-x));
        }

        function logisticRegression(features, labels, iterations, learningRate) {
          features = features.map(feature => [1, feature]);

          let weights = Array(features[0].length).fill(0);

          for (let i = 0; i < iterations; i++) {
            const predictions = features.map(point => sigmoid(dotProduct(point, weights)));

            // calculate errors
            const errors = labels.map((label, index) => label - predictions[index]);

            // calculate gradients
            const gradients = features.map(
              (point, index) => point.map(value => value * errors[index])
            );

            // calculate mean gradients
            const meanGradients = gradients.reduce(
              (accumulator, currentValue) =>
                accumulator.map((value, index) => value + currentValue[index])
            ).map(value => value * (1 / features.length));

            // update weights
            weights = weights.map(
              (weight, index) => weight + learningRate * meanGradients[index]
            );
          }

          return weights;
        }

        // dot product function
        function dotProduct(a, b) {
          return a.reduce((accumulator, currentValue, currentIndex) =>
            accumulator + currentValue * b[currentIndex],
            0
          );
        }
    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        print('sum is'+str(sum(la_opt_in)))
        print('total is'+str(la_opt_in))

        if sum(la_opt_in)==len(la_opt_in):
            thisExp.addData("regression_not_applied",1 )


            feat_lr=[[.3],[.4],[.5],[.6]];
            la_opt_in=[0,0,1,1];
        elif sum(la_opt_in)==0:
            thisExp.addData("regression_not_applied",1 )

            feat_lr=[[.3],[.4],[.5],[.6]];
            la_opt_in=[0,0,1,1];

        else:
            thisExp.addData("regression_not_applied",0 )
    CodeComponent run_reg_2
      Code Type = Both
      Begin JS Experiment:
        function sigmoid(x) {
          return 1 / (1 + Math.exp(-x));
        }

        function logisticRegression(features, labels, iterations, learningRate) {
          features = features.map(feature => [1, feature]);

          let weights = Array(features[0].length).fill(0);

          for (let i = 0; i < iterations; i++) {
            const predictions = features.map(point => sigmoid(dotProduct(point, weights)));

            // calculate errors
            const errors = labels.map((label, index) => label - predictions[index]);

            // calculate gradients
            const gradients = features.map(
              (point, index) => point.map(value => value * errors[index])
            );

            // calculate mean gradients
            const meanGradients = gradients.reduce(
              (accumulator, currentValue) =>
                accumulator.map((value, index) => value + currentValue[index])
            ).map(value => value * (1 / features.length));

            // update weights
            weights = weights.map(
              (weight, index) => weight + learningRate * meanGradients[index]
            );
          }

          return weights;
        }

        // dot product function
        function dotProduct(a, b) {
          return a.reduce((accumulator, currentValue, currentIndex) =>
            accumulator + currentValue * b[currentIndex],
            0
          );
        }
      Begin JS Routine:
        numIterations = 120000;
        learningRate = 0.01;
        if ((trials_2.thisN === 0)) {
            weight = logisticRegression(feat_lr, la_opt_in, numIterations, learningRate);
            rat_indifferent=-weight[0]/weight[1];
            win_p=rat_indifferent+.2*(1-rat_indifferent);
            win_prob=Math.round((Math.round(win_p * 100) / 100) * 100);





            lose_prob=100-win_prob;
        //lose_prob=Math.round(lose_p * 100) / 100 ;
            psychoJS.experiment.addData("win_prob", win_prob);
            psychoJS.experiment.addData("lose_prob", lose_prob);



        }
    CodeComponent code_52
      Code Type = Auto->JS
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      Begin Experiment:
        coins = 0
        win_prob = 0
        varie_size=(1.69,1)
        varie_position=(0,0)
      Begin Routine:
        #text.alignHoriz='left'
        if win_prob>100 or win_prob<0:
            thisExp.addData("not_normal_reg", 1)

            win_prob=20
            lose_prob=80

        if trials_2.thisN==1:
            text_to_show='What would you prefer?'
            #correct_mat='a'
            answer_one='Chance of OF WINNING: ' + str(win_prob)+'%\nChance of LOSING:  '+str(lose_prob)+'%\n\nStay Safe -Press A\nTake Gamble-Press B'

        else:
            text_to_show='What would you prefer?'
            answer_one='a) Win 90 coins with a 20% chance and lose 60 coins with a 80% chace\n\n\n\nb) Keep your current number of coins'


        test_q_6.alignHoriz="left"
        answer.alignHoriz="left"
        if trials_2.thisN ==1:
            varie_size=(.8,.6)
            varie_position=(0,-.3)
            only_if_slide=25

        else:
            varie_size=(1.71,1.4)
            only_if_slide=0
            varie_position=(0,0)

        if trials_2.thisN==1:
            if win_prob>90:
                risk_slide=11
            elif win_prob>80:
                risk_slide=10
            elif win_prob>70:
                risk_slide=9
            elif win_prob>60:
                risk_slide=8
            elif win_prob>50:
                risk_slide=7
            elif win_prob>40:
                risk_slide=6
            elif win_prob>30:
                risk_slide=5
            elif win_prob>20:
                risk_slide=4
            elif win_prob>10:
                risk_slide=3
            elif win_prob>0:
                risk_slide=2

        elif trials_2.thisN==0:
            risk_slide=1
        else:
            risk_slide=trials_2.thisN+10


        if trials_2.thisN<2:
            skip_first=0
        else:
            skip_first=25
    TextComponent test_q_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (-.4, .75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = What would you prefer?
      units = norm
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    TextComponent answer
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (-.4, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $only_if_slide
      text [set every repeat] = $answer_one  
      units = norm
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    ImageComponent image_9
      color = -1.0000, -1.0000, -1.0000
      image [set every repeat] = $'risk_distributions_final/Slide' + str(risk_slide) + '.jpeg'
      pos [set every repeat] = $varie_position
      size [set every repeat] = $varie_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = norm
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    CodeComponent code_53
      Code Type = Auto->JS
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      Begin Routine:
        print('win prob '+str(win_prob))
        print('weights' +str(weight))
        text_31.alignHoriz="left"
    TextComponent text_31
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.099
      pos = (-1.15, 1.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $skip_first
      units = norm
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      text:
        Don't take gamble: press A
        Take gamble : press B
    KeyboardComponent key_resp_16
      allowedKeys = 'a','b','y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine opt_in_choice_3
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    CodeComponent data_saving_3
      Code Type = Auto->JS
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      Begin Routine:
        if block.thisN==6 and trials_task.thisN==0:
            total_earned=0
      End Routine:
        #where to put computer opt in and self opt in
        thisExp.addData("block", block.thisN)
        thisExp.addData("trials", trials_task.thisN)

        thisExp.addData("left_option", left_plane)
        thisExp.addData("right_option", right_plane)
        thisExp.addData("treasure_island", end_island)
        thisExp.addData("starting_island", beg_island)
        thisExp.addData("single_ticket", single_ticket_success[trials_task.thisN])
        thisExp.addData("second_ticket", two_ticket_success[trials_task.thisN])
        thisExp.addData("third_ticket", three_ticket_success[trials_task.thisN])

        print('id number to use is '+str(part_id))
    CodeComponent initiate_action_success_2
      Code Type = Both
      Begin JS Routine:
        //var begin_trial= new Date().toLocaleTimeString([], { hour: '2-digit', minute: '2-digit' });
        const date = new Date();

        const trial_started = Math.floor(date.getTime() / 1000);

        psychoJS.experiment.addData("trial_started", trial_started);




        success_on = [];
        spot = randint(0, 1);
        earn = [-.55, 0.7];

        if ((spot === 0)) {
            comp_choose_loc = [- 0.75, .8];
            I_choose = [0.25, 0.8];

        } else {
            comp_choose_loc = [0.55, 0.8];
            I_choose = [- 0.2, 0.8];
        }
      Begin Routine:
        # they havent been succesful yet
        success_on=[]

        spot=random.randint(0,1)
        if spot==0:
            comp_choose_loc=(-.55,.8)
            I_choose=(.55,.8)
        else:
            comp_choose_loc=(.55,.8)
            I_choose=(-.55,.8)
    CodeComponent set_transports_2
      Code Type = Both
      Begin Experiment:
        last_beg=1
        total_earned=0
      Begin JS Experiment:
        last_beg = 1;
      Begin JS Routine:
        shuffle(islands_start);
        beg_island = islands_start[0];

        shuffle(islands);
        shuffle(transport);
        end_island = islands[1];
        left_plane = transport[0];
        right_plane = transport[1];
        comp_choose.alignHoriz="left";
        if ((shuffledArray[trials_task.thisN]==1)){
            force_divergence=1;



        } else{
            force_divergence=0;


        }
        //force_divergence = randint(0, 10);
        if ((force_divergence === 1)) {
            psychoJS.experiment.addData("ss_transition", 0);

            if ((beg_island === "islands/hut.png")) {
                end_island = "islands/town.png";
            } else {
                end_island = "islands/mountain.png";
            }
        }
        else {
            psychoJS.experiment.addData("ss_transition", 1);

            if ((beg_island === "islands/hut.png")) {
                end_island = "islands/mountain.png";
            } else {
                end_island = "islands/town.png";
            }



        }
      Begin Routine:
        solution=False
        if last_beg==0:
            beg_island=islands[1]
            last_beg=1
        else:
            beg_island=islands[0]
            last_beg=0
        random.shuffle(islands)
        random.shuffle(transport)
        end_island=islands[0]
        left_plane=transport[0]
        right_plane=transport[1]


        choose.alignHoriz="left"
        comp_choose.alignHoriz="left"
    CodeComponent record_wself_2
      Code Type = Both
      Begin JS Routine:
        letter_height=.075
        opt_answer=0


        psychoJS.experiment.addData("c_inelastic", c_inelastic);
        psychoJS.experiment.addData("c_elastic",c_elastic);
      Begin Routine:
        # we need to go from place to place now


        letter_height=.075
        opt_answer=0
    CodeComponent record_optin_3
      Code Type = Auto->JS
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      Begin Experiment:
        la_opt_in=[];
        feat_lr=[];
      Begin Routine:
        forced_actions=False
        #print('c_elastic '+str(c_elastic))
        #print('c_inelastic '+str(c_inelastic))
        num_1_actions=0

        if block.thisN<6:
            num_3_actions=4

        else:
            num_3_actions=5
        total_num_forced=num_1_actions+num_3_actions


        if trials_task.thisN <num_3_actions:
            forced_actions=True
            cs=1
            acted_or_not=0
            action_or_not=2.5
            comp_select_time=0
            num_actions=1
            retry_loop=2
            comp_extra_five=0
            continueRoutine=false

            sreview_ins.finished=True

        #elif (trials_task.thisN+1) % 5 ==0 and trials_task.thisN>3 and trials_task.thisN<21:
           # print("this is a case of "+str((trials_task.thisN+1) % 5 ==0))
           # print("trial recorded as "+trials_task.thisN)
         #   forced_actions=False
          #  cs=1
           # acted_or_not=0
            #action_or_not=2.5
            #comp_select_time=0
            #num_actions=1
            #retry_loop=2
            #comp_extra_five=0
            #continueRoutine=false

            #sreview_ins.finished=True

        if trials_task.thisN==total_num_forced or trials_task.thisN==total_num_forced+1:
            only_first_trial=1000
        else:
            only_first_trial=0

        if forced_actions==True:
            continueRoutine=false
            allowed_on_opt=['y']
            opt_in_text_shown="Activate Free Ticket for 3 attempts(Press 'Y')"
        else:
            allowed_on_opt=['9','1','2','3']
            opt_in_text_shown="How much do you want to invest in boarding a ride?\n\n0- 0 tickets (walk)\n1 ticket (Cost: 40 coins)\n2 tickets (Cost:60 coins, 1 jump)\n3 tickets (Cost: 80 coins, 2 jumps)"
      End Routine:
        if forced_actions==False:

            if opt_in.keys=='1' or opt_in.keys=='2' or opt_in.keys=='3':
                cs=1
                acted_or_not=0
                action_or_not=2.5
                comp_select_time=0
                num_actions==0
                retry_loop=2
                comp_extra_five=0
                sreview_ins.finished=True
            elif opt_in.keys=='9':

                cs=0
                acted_or_not=2
                action_or_not=0
                comp_select_time=3
                num_actions==0
                retry_loop=0
                comp_extra_five=1
                sreview_ins.finished=True
        if block.thisN>5:
                la_opt_in.push(cs)
                feat_lr.push([c_inelastic+(c_elastic/2)])


        if opt_in.keys=='1':
            proscribed_actions=1
        elif opt_in.keys=='2':
            proscribed_actions=2
        elif opt_in.keys=='3':
            proscribed_actions=3
        elif opt_in.keys=='9':
            proscribed_actions=0
        else:
            proscribed_actions=444
    PolygonComponent background_color_4
      fillColor [set every repeat] = $color_back
      shape = rectangle
      size = (5, 5)
      startVal [time (s)] = 0.0
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    ImageComponent dep_island_5
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $beg_island
      pos = (0, .725)
      size = (0.33, 0.66)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      units = norm
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    TextComponent comp_choose
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = .075
      pos = (-.4,.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt_in_text_shown
      units = norm
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    TextComponent here
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (.5, .85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = You are here
      units = norm
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    ImageComponent origin_pointer
      color = -1.0000, -1.0000, -1.0000
      image = planes/pointer.png
      pos = (.25, .85)
      size = (0.22, 0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextComponent cur_winnings_3
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 0.1
      pos = (.65,.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text [set every repeat] = $'\n\n\n'+'Current total earnings: ' + str(total_earned)
      units = norm
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    TextComponent planet_number_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (.75,-.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Planet ' +str(block.thisN+1) +' of ' +str(num_blocks)+ '\nTrip '+str(trials_task.thisN+1)+' of ' + str(trial_length)
      units = norm
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    CodeComponent timeOut_2
      Code Type = Both
      Begin JS Experiment:
        total_opt_timedOut=0;
      Begin JS Routine:
        startOptTime = new Date();
        start_opt_time= Math.floor(startOptTime.getTime() / 1000);
        psychoJS.experiment.addData("optIn_started", start_opt_time);
        opt_timedOut=false;
        first_opt = Math.floor(startOptTime.getTime() / 1000);
      Each JS Frame:
        time_sopt = new Date();
        currentOpt_time= Math.floor(time_sopt.getTime() / 1000);


        if (((currentOpt_time - first_opt) > 25)) {
            timeOfOpttimeOut = Math.floor(time_sopt.getTime() / 1000);

            psychoJS.experiment.addData("opt_timeout_time", timeOfOpttimeOut);
            psychoJS.experiment.addData("opt_timeout", 1);

            opt_timedOut=true;

            continueRoutine = false;
            total_opt_timedOut+=1;

        }
      End JS Routine:
        end_opt = new Date();
        end_opt_time= Math.floor(end_opt.getTime() / 1000);
        psychoJS.experiment.addData("opt_end_time", end_opt_time);



        if ((total_opt_timedOut>8)){
            psychoJS.quit({message: 'You have timed out too many times and therefore cannot proceed with the study'});



        }
    PolygonComponent occluded_treasure_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -.75)
      shape = rectangle
      size = (0.2, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextComponent text_30
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Treasure Location: Shown after you decide whether to walk or to buy a ticket
      units = norm
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    KeyboardComponent opt_in
      allowedKeys = '1','2','3','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = opt_inr.jpg
      pos = (0, .26)
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      units = norm
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Flow
  Routine init_code
  LoopInitiator consent_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine consent_form_1
    Routine consent_form_2
    Routine consent_form_3
    Routine consent_form_4
    Routine consent_5
  LoopTerminator consent_loop
  LoopInitiator loop1 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator review_first loopType="TrialHandler"
      loopType = random
      nReps = 20
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      Routine review_routes
    LoopTerminator review_first
    LoopInitiator round1 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine quiz
    LoopTerminator round1
  LoopTerminator loop1
  LoopInitiator loop2 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    LoopInitiator review_second loopType="TrialHandler"
      loopType = random
      nReps = 52
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      Routine review_routes
    LoopTerminator review_second
    LoopInitiator round2 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine quiz
    LoopTerminator round2
  LoopTerminator loop2
  LoopInitiator walk_examples loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine make_fake_choice
    Routine show_fake_choice
    Routine feeedbackss
  LoopTerminator walk_examples
  LoopInitiator loop3 loopType="TrialHandler"
    loopType = random
    nReps = 52
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    LoopInitiator review_third loopType="TrialHandler"
      loopType = random
      nReps = 52
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      Routine review_routes
    LoopTerminator review_third
    LoopInitiator round3 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine quiz
    LoopTerminator round3
  LoopTerminator loop3
  LoopInitiator see_actions loopType="TrialHandler"
    loopType = random
    nReps = 16
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    Routine new_examples
    Routine opt_in_choice_2
    Routine make_choice_2
    Routine show_choice_2
    Routine feeedback__2
  LoopTerminator see_actions
  LoopInitiator loop4 loopType="TrialHandler"
    loopType = random
    nReps = 52
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    LoopInitiator review_fourth loopType="TrialHandler"
      loopType = random
      nReps = 52
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      Routine review_routes
    LoopTerminator review_fourth
    LoopInitiator round4 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine quiz
    LoopTerminator round4
  LoopTerminator loop4
  LoopInitiator miss_ride_sometimes loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine new_examples
    Routine opt_in_choice_2
    Routine make_choice_2
    Routine show_choice_2
    Routine feeedback__2
  LoopTerminator miss_ride_sometimes
  LoopInitiator loop5 loopType="TrialHandler"
    loopType = random
    nReps = 145
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    LoopInitiator review_fifth loopType="TrialHandler"
      loopType = random
      nReps = 52
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      Routine review_routes
    LoopTerminator review_fifth
    LoopInitiator round5 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine quiz
    LoopTerminator round5
  LoopTerminator loop5
  LoopInitiator couple_of_examples loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine action_prep
    Routine action_execution
  LoopTerminator couple_of_examples
  LoopInitiator loop6 loopType="TrialHandler"
    loopType = random
    nReps = 53
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    LoopInitiator review_sixth loopType="TrialHandler"
      loopType = random
      nReps = 52
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      Routine review_routes
    LoopTerminator review_sixth
    LoopInitiator round6 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine quiz
    LoopTerminator round6
  LoopTerminator loop6
  LoopInitiator platform_examples loopType="TrialHandler"
    loopType = random
    nReps = 9
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    Routine action_prep
    Routine action_execution
    Routine feedback
  LoopTerminator platform_examples
  LoopInitiator loop7 loopType="TrialHandler"
    loopType = random
    nReps = 52
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    LoopInitiator review_seventh loopType="TrialHandler"
      loopType = random
      nReps = 52
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      Routine review_routes
    LoopTerminator review_seventh
    LoopInitiator round7 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine quiz
    LoopTerminator round7
  LoopTerminator loop7
  LoopInitiator trials_review loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine open_questions
  LoopTerminator trials_review
  Routine let_the_game_begin
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    Routine init_block
    LoopInitiator relearn_rules loopType="TrialHandler"
      loopType = random
      nReps = 3
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      LoopInitiator review_loop_1 loopType="TrialHandler"
        loopType = random
        nReps = 30
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        Routine review_routes
      LoopTerminator review_loop_1
      LoopInitiator act_testing loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine quiz
      LoopTerminator act_testing
    LoopTerminator relearn_rules
    LoopInitiator repeat_quiz loopType="TrialHandler"
      loopType = random
      nReps = 3
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      LoopInitiator practice_task loopType="TrialHandler"
        loopType = random
        nReps = 25
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        Routine practice_in_task
      LoopTerminator practice_task
      LoopInitiator practice_quiz loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine check_action_understanding
      LoopTerminator practice_quiz
    LoopTerminator repeat_quiz
    Routine traveling_to_new_planet
    LoopInitiator trials_task loopType="TrialHandler"
      loopType = random
      nReps = $trial_length
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      Routine one_or_three_2
      LoopInitiator sreview_ins loopType="TrialHandler"
        loopType = random
        nReps = 10
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        Routine opt_in_choice_3
        Routine timedOut_Lost
      LoopTerminator sreview_ins
      Routine make_choice
      Routine show_choice
      Routine ok_wait_2
      LoopInitiator retry loopType="TrialHandler"
        loopType = random
        nReps = $retry_loop
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        Routine action_prep_2
        Routine action_exec
        Routine try_again_2
        Routine ok_wait
      LoopTerminator retry
      Routine timedOUT
      Routine feedback_2
      Routine excited
      Routine content
    LoopTerminator trials_task
    Routine num_tickets_query
    Routine breather_2
  LoopTerminator block
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine risk_choices_2
    Routine gamblingoutcome
    Routine gamble_outcome
  LoopTerminator trials_2
  LoopInitiator need_feedback loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine open_questions_2
  LoopTerminator need_feedback
  Routine end_experiment
